Journal
Description: 3 Level Segmentation- 

  Low Expression MiRFP in Blue, Middle in Green and High in Red- 

  Pulse1 is Correlated to Blue (Low) - 800ms recommended
  Pulse2 Length is Correlated to Green (Middle) - 200ms recommended
  Pulse3 Length is Correlated  to Red (High) - 50ms recommended

  Note that GFP/Dendra2 image must be taken after miRFP image. So, images should go GFP --> NIR --> RFP (post)
Version VersionNumber=2.4
Well = Screen.Status.WellName + "_" + + "Site" + str(Screen.Status.SiteNum)
Power = str(Component.405_Laser_Power.Position)  +"% " +"Laser Power"

IfThenElse Expression=Screen.Status.WaveName="Camera GFP"
  CodeBlock Condition=true
    Reg1 = 0
    Reg2 = 0
    Reg3 = 0
    Comment: Segmentation of miRFP for Targeting: 
      Threshold level after segmentation to creat binay image
      Low Gray (0-1) 
      Middle Green (4-5) 
      Hi Red- (7-8)
    Basic Filters
      imSource = "Camera NIR"
      imResult = "LowPass"
      nOperation = 1
      nFilterWidth = 5
      nFilterHeight = 5
      nSubSample = 1
      Percentile = 50
      Depth16Sel = 1
      dScalingFactor = 0.9
      byResultScale = 10
      bAutoResultScale = FALSE
      mKernelTypeSharpen = 1
    Count Nuclei
      imNucleusSrc = m 1 7 9 0 1 1 0 10 Camera NIR
      imNucleusDest = "Segmentation"
      dApproxMinWidth = 8
      dApproxMaxWidth = 25
      dNucleusMinIntesity = 300
      iRootAlgorithm = 1
      bNucleusResult = TRUE
      ASSAY_config_summary_log_string = ""
      ASSAY_config_data_log_string = ""
    Close
      im = m 1 7 9 0 1 1 0 8 Untitled
      bSaveIt = FALSE
    Threshold Image
      srcThresh = m 1 7 9 0 1 2 0 8 Untitled
      min = 1
      max = 65535
      bMore = FALSE
      idxState = 1
      nTab = 1
      nMinMaxRange = 1
      bTransparentThresh = FALSE
      dTransparencyPct = 0.5
      byThreshRed = 255
      byThreshGreen = 128
      byThreshBlue = 64
      nThreshDisplayMode = 1
    Binary Operations
      imSource = m 1 7 9 0 1 2 0 8 Untitled
      imDest = "miRFP Binary"
      bUseThresholdVars = FALSE
      nThresholdState = 1
      uThresholdMin = 0
      uThresholdMax = 255
    Close
      im = m 1 7 9 0 1 2 0 8 Untitled
      bSaveIt = FALSE
    Comment: Segment Bottom Quartile
    Integrated Morphometry - Load State
      stLoadFileName = "C:\MM\app\mmproc\journals\Journals Fowler\Fowler Lab Segmentation\11-06-17_miRFP-multibin\0-Q1.IMA"
    Integrated Morphometry - Measure
      imSource = "Camera NIR"
      nColor = 0
      imMask = m 1 7 9 0 1 5 0 21 IMA Objects All Cells
      bMeasureUsingMask = TRUE
    Integrated Morphometry - Log Data
      imSource = "Camera NIR"
      nDisplay = 1
      nMode = 1
      nParm = 1
      nYParm = 2
    Integrated Morphometry - Create Objects Mask
    Create Regions Around Objects
      imSource = "IMA Objects Mask"
    IfThenElse Expression=Image.NumRegions>=1
      CodeBlock Condition=true
        Reg1 = 1
        ForNextLoop LoopVariable=Image.ActiveRegion, StartValue=1, EndValue=Image.NumRegions, StepValue=1
          Region.ColorBlue = 255
          Region.ColorGreen = 0
          Region.ColorRed = 0
        Save Regions
          stFilename = "C:\MM\regions\Batch 1 ROI Targeting.rgn"
          saveImage = "IMA Objects Mask"
      CodeBlock Condition=false
        Comment: No Regions Present at the Low Threshold
    Close
      im = "IMA Objects Mask"
      bSaveIt = FALSE
    Comment: Segment Second Quartile Nuclei
    Integrated Morphometry - Load State
      stLoadFileName = "C:\MM\app\mmproc\journals\Journals Fowler\Fowler Lab Segmentation\11-06-17_miRFP-multibin\Q1-Q2.IMA"
    Integrated Morphometry - Measure
      imSource = "Camera NIR"
      nColor = 0
      imMask = m 1 7 9 0 1 5 0 21 IMA Objects All Cells
      bMeasureUsingMask = TRUE
    Integrated Morphometry - Log Data
      imSource = "Camera NIR"
      nDisplay = 1
      nMode = 1
      nParm = 1
      nYParm = 2
    Integrated Morphometry - Create Objects Mask
    Create Regions Around Objects
      imSource = "IMA Objects Mask"
    IfThenElse Expression=Image.NumRegions>=1
      CodeBlock Condition=true
        Reg2 = 1
        ForNextLoop LoopVariable=Image.ActiveRegion, StartValue=1, EndValue=Image.NumRegions, StepValue=1
          Region.ColorBlue = 0
          Region.ColorGreen = 255
          Region.ColorRed = 0
        Save Regions
          stFilename = "C:\MM\regions\Batch 2 ROI Targeting.rgn"
          saveImage = "IMA Objects Mask"
      CodeBlock Condition=false
        Comment: No Regions Present at the Low Threshold
    Close
      im = "IMA Objects Mask"
      bSaveIt = FALSE
    Comment: Segment Third Quartile Nuclei
    Integrated Morphometry - Load State
      stLoadFileName = "C:\MM\app\mmproc\journals\Journals Fowler\Fowler Lab Segmentation\11-06-17_miRFP-multibin\Q2-Q3.IMA"
    Integrated Morphometry - Measure
      imSource = "Camera NIR"
      nColor = 0
      imMask = m 1 7 9 0 1 5 0 21 IMA Objects All Cells
      bMeasureUsingMask = TRUE
    Integrated Morphometry - Log Data
      imSource = "Camera NIR"
      nDisplay = 1
      nMode = 1
      nParm = 1
      nYParm = 2
    Integrated Morphometry - Create Objects Mask
    Create Regions Around Objects
      imSource = "IMA Objects Mask"
    IfThenElse Expression=Image.NumRegions>=1
      CodeBlock Condition=true
        Reg3 = 1
        ForNextLoop LoopVariable=Image.ActiveRegion, StartValue=1, EndValue=Image.NumRegions, StepValue=1
          Region.ColorBlue = 0
          Region.ColorGreen = 0
          Region.ColorRed = 255
        Save Regions
          stFilename = "C:\MM\regions\Batch 3 ROI Targeting.rgn"
          saveImage = "IMA Objects Mask"
      CodeBlock Condition=false
        Comment: No Regions Present at the Low Threshold
    Close
      im = "IMA Objects Mask"
      bSaveIt = FALSE
    Close
      im = m 1 7 9 0 1 5 0 8 Untitled
      bSaveIt = FALSE
    Comment: END Segmentation of Image
    Comment: *****************TARGETING FOR MOSAIC -Batch 1 ROI's......NO NEED TO EDIT SCRIPT/CHANGE BELOW THIS LINE**************************************
    Select Image
      im = "Camera NIR"
      prompt = ""
    IfThenElse Expression=Reg1=1
      CodeBlock Condition=true
        Comment: Regions are Saved and loaded to Mosaic for Targeting
        Load Regions
          stFilename = "C:\MM\regions\Batch 1 ROI Targeting.rgn"
          openImage = "Camera NIR"
        current_illumination = Device.Illumination.Setting
        Select Illumination
          bUseLegacyDelay = FALSE
          cMillisecDelay = 100
          stSetting = "Camera GFP" Override=None OverrideVariable=Setting Name
        Targeted Illumination
          IlluminationSetting = "Camera GFP" Override=None OverrideVariable=Illumination setting
          ImageIlluminationSetting = "" Override=None OverrideVariable=Imaging Illumination setting
          CoordinateSetting = "20X LWD" Override=Variable OverrideVariable=Device.Magnification.Setting
          PositionSetting = 3 Override=None OverrideVariable=Position: setting (1=image coords, 2=center of active region, 3=all region centers)
          PositionImageCoordinatesX = 100 Override=None OverrideVariable=Position: image coordinate X
          PositionImageCoordinatesY = 100 Override=None OverrideVariable=Position: image coordinate Y
          NumberOfLaserFires = 1 Override=None OverrideVariable=Number of laser pulses
          NeutralDensitySetting = 5 Override=None OverrideVariable=Attenuator plate: % transmission
          dExpDurMS = 5000 Override=Variable OverrideVariable=pulsetime
          PointSize = 1 Override=None OverrideVariable=Point size
        Delay
          dpDelayTime = 100 Override=Variable OverrideVariable=pulsetime
          nDelayUnits = 1
        Select Illumination
          bUseLegacyDelay = FALSE
          cMillisecDelay = 100
          stSetting = "Camera GFP" Override=Variable OverrideVariable=current_Illumination
        Clear All Regions
          clearImage = "Camera NIR"
      CodeBlock Condition=false
        Reg1 = 0
        Comment: Dont' Utilize the Mosaic on this Field of VIew
    Select Image
      im = "Camera NIR"
      prompt = ""
    Comment: *****************TARGETING FOR MOSAIC -Batch 2 ROI's......NO NEED TO EDIT SCRIPT/CHANGE BELOW THIS LINE**************************************
    IfThenElse Expression=Reg2=1
      CodeBlock Condition=true
        Comment: Regions are Saved and loaded to Mosaic for Targeting
        Load Regions
          stFilename = "C:\MM\regions\Batch 2 ROI Targeting.rgn"
          openImage = "Camera NIR"
        current_illumination = Device.Illumination.Setting
        Select Illumination
          bUseLegacyDelay = FALSE
          cMillisecDelay = 100
          stSetting = "Camera GFP" Override=None OverrideVariable=Setting Name
        Targeted Illumination
          IlluminationSetting = "Camera GFP" Override=None OverrideVariable=Illumination setting
          ImageIlluminationSetting = "" Override=None OverrideVariable=Imaging Illumination setting
          CoordinateSetting = "20X LWD" Override=Variable OverrideVariable=Device.Magnification.Setting
          PositionSetting = 3 Override=None OverrideVariable=Position: setting (1=image coords, 2=center of active region, 3=all region centers)
          PositionImageCoordinatesX = 100 Override=None OverrideVariable=Position: image coordinate X
          PositionImageCoordinatesY = 100 Override=None OverrideVariable=Position: image coordinate Y
          NumberOfLaserFires = 1 Override=None OverrideVariable=Number of laser pulses
          NeutralDensitySetting = 5 Override=None OverrideVariable=Attenuator plate: % transmission
          dExpDurMS = 5000 Override=Variable OverrideVariable=pulsetime2
          PointSize = 1 Override=None OverrideVariable=Point size
        Delay
          dpDelayTime = 100 Override=Variable OverrideVariable=pulsetime2
          nDelayUnits = 1
        Select Illumination
          bUseLegacyDelay = FALSE
          cMillisecDelay = 100
          stSetting = "Camera GFP" Override=Variable OverrideVariable=current_Illumination
        Clear All Regions
          clearImage = "Camera NIR"
      CodeBlock Condition=false
        Comment: Dont' Utilize the Mosaic on this Field of VIew
    Comment: *****************TARGETING FOR MOSAIC -Batch 3 ROI's......NO NEED TO EDIT SCRIPT/CHANGE BELOW THIS LINE**************************************
    Select Image
      im = "Camera NIR"
      prompt = ""
    IfThenElse Expression=Reg3=1
      CodeBlock Condition=true
        Comment: Regions are Saved and loaded to Mosaic for Targeting
        Load Regions
          stFilename = "C:\MM\regions\Batch 3 ROI Targeting.rgn"
          openImage = "Camera NIR"
        current_illumination = Device.Illumination.Setting
        Select Illumination
          bUseLegacyDelay = FALSE
          cMillisecDelay = 100
          stSetting = "Camera GFP" Override=None OverrideVariable=Setting Name
        Targeted Illumination
          IlluminationSetting = "Camera GFP" Override=None OverrideVariable=Illumination setting
          ImageIlluminationSetting = "" Override=None OverrideVariable=Imaging Illumination setting
          CoordinateSetting = "20X LWD" Override=Variable OverrideVariable=Device.Magnification.Setting
          PositionSetting = 3 Override=None OverrideVariable=Position: setting (1=image coords, 2=center of active region, 3=all region centers)
          PositionImageCoordinatesX = 100 Override=None OverrideVariable=Position: image coordinate X
          PositionImageCoordinatesY = 100 Override=None OverrideVariable=Position: image coordinate Y
          NumberOfLaserFires = 1 Override=None OverrideVariable=Number of laser pulses
          NeutralDensitySetting = 5 Override=None OverrideVariable=Attenuator plate: % transmission
          dExpDurMS = 5000 Override=Variable OverrideVariable=pulsetime3
          PointSize = 1 Override=None OverrideVariable=Point size
        Delay
          dpDelayTime = 100 Override=Variable OverrideVariable=pulsetime3
          nDelayUnits = 1
        Select Illumination
          bUseLegacyDelay = FALSE
          cMillisecDelay = 100
          stSetting = "Camera GFP" Override=Variable OverrideVariable=current_Illumination
        Clear All Regions
          clearImage = "Camera NIR"
      CodeBlock Condition=false
        Reg1 = 0
        Comment: Dont' Utilize the Mosaic on this Field of VIew
    Select Image
      im = "Camera NIR"
      prompt = ""
  CodeBlock Condition=false


Comment: Create Overlay Images for Final Display Purposes: Conditions: (1,1,1) (1,1,0) (1,0,1) (1,0,0) (0,1,1) (0,1,0) (0,0,1) (0,0,0)
IfThenElse Expression=Screen.Status.WaveName="Camera RFP_532x_Post"
  CodeBlock Condition=true
    IfThenElse Expression=Reg1=1
      CodeBlock Condition=true
        IfThenElse Expression=Reg2=1
          CodeBlock Condition=true
            IfThenElse Expression=Reg3=1
              CodeBlock Condition=true
                Comment: Lo, Mid and High Regions Found  Reg1=1 and Reg 2=1 and Reg3=1
                Comment: Reg1=1 and Reg2=1 and  Reg3=1
                Comment: #1  (1,1,1)
                Color Combine
                  imRed = "Camera NIR"
                  imGreen = "Camera GFP"
                  imBlue = m 1 2 9 2 1 -1 -1 8 Untitled
                  imStack = m 1 2 9 2 1 -1 -1 8 Untitled
                  imDest = "Color Combine"
                  imSource8 = m 1 2 9 2 1 -1 -1 8 Untitled
                  bColorEncode = FALSE
                  nSource = 1
                  nResultDepth = 2
                  bHueRendering = FALSE
                Text
                  im = m 1 7 9 0 1 51 0 14 Target Regions
                  xPos = 10
                  yPos = 10
                  text = "%Well%     Pulse Time Hi: %pulsetime%     Pulse Time Med: %pulsetime2%     Pulse Time Lo: %pulsetime3% Power: %Power%   "
                  bFillBkgd = FALSE
                  nFore = 255
                  nBack = 0
                  nSelectorPlane = 9
                  fontName = "Arial"
                  fontStyle = "Bold"
                  fontSize = 11
                  byRedForeColor = 255
                  byGreenForeColor = 255
                  byBlueForeColor = 255
                  byRedBackColor = 0
                  byGreenBackColor = 0
                  byBlueBackColor = 0
                Load Regions
                  stFilename = "C:\MM\regions\Batch 1 ROI Targeting.rgn"
                  openImage = m 1 7 9 0 1 51 0 8 Untitled
                Load Regions
                  stFilename = "C:\MM\regions\Batch 2 ROI Targeting.rgn"
                  openImage = m 1 7 9 0 1 51 0 8 Untitled
                Load Regions
                  stFilename = "C:\MM\regions\Batch 3 ROI Targeting.rgn"
                  openImage = m 1 7 9 0 1 51 0 8 Untitled
                As Displayed
                  imSource = m 1 7 9 0 1 51 0 8 Untitled
                  imDest = "Target Regions Overlay"
                  nCopyRegion = 2
                Close
                  im = m 1 7 9 0 1 51 0 16 IMA Objects Mask
                  bSaveIt = FALSE
              CodeBlock Condition=false
                Comment: #2(1,1,0)
                Color Combine
                  imRed = "Camera NIR"
                  imGreen = "Camera GFP"
                  imBlue = m 1 2 9 2 1 -1 -1 8 Untitled
                  imStack = m 1 2 9 2 1 -1 -1 8 Untitled
                  imDest = "Color Combine"
                  imSource8 = m 1 2 9 2 1 -1 -1 8 Untitled
                  bColorEncode = FALSE
                  nSource = 1
                  nResultDepth = 2
                  bHueRendering = FALSE
                Text
                  im = m 1 7 9 0 1 58 0 14 Target Regions
                  xPos = 10
                  yPos = 10
                  text = "%Well%     Pulse Time Hi: %pulsetime%     Pulse Time Med: %pulsetime2%     Pulse Time Lo: %pulsetime3% Power: %Power%   "
                  bFillBkgd = FALSE
                  nFore = 255
                  nBack = 0
                  nSelectorPlane = 9
                  fontName = "Arial"
                  fontStyle = "Bold"
                  fontSize = 11
                  byRedForeColor = 255
                  byGreenForeColor = 255
                  byBlueForeColor = 255
                  byRedBackColor = 0
                  byGreenBackColor = 0
                  byBlueBackColor = 0
                Load Regions
                  stFilename = "C:\MM\regions\Batch 1 ROI Targeting.rgn"
                  openImage = m 1 7 9 0 1 58 0 8 Untitled
                Load Regions
                  stFilename = "C:\MM\regions\Batch 2 ROI Targeting.rgn"
                  openImage = m 1 7 9 0 1 58 0 8 Untitled
                As Displayed
                  imSource = m 1 7 9 0 1 58 0 8 Untitled
                  imDest = "Target Regions Overlay"
                  nCopyRegion = 2
                Close
                  im = m 1 7 9 0 1 58 0 16 IMA Objects Mask
                  bSaveIt = FALSE
          CodeBlock Condition=false
            Comment: Reg1=1 and Reg 2=0 Reg3=1
            IfThenElse Expression=Reg3=1
              CodeBlock Condition=true
                Comment: #3 (1,0,1)
                Color Combine
                  imRed = "Camera NIR"
                  imGreen = "Camera GFP"
                  imBlue = m 1 2 9 2 1 -1 -1 8 Untitled
                  imStack = m 1 2 9 2 1 -1 -1 8 Untitled
                  imDest = "Color Combine"
                  imSource8 = m 1 2 9 2 1 -1 -1 8 Untitled
                  bColorEncode = FALSE
                  nSource = 1
                  nResultDepth = 2
                  bHueRendering = FALSE
                Text
                  im = m 1 7 9 0 1 64 0 14 Target Regions
                  xPos = 10
                  yPos = 10
                  text = "%Well%     Pulse Time Hi: %pulsetime%     Pulse Time Med: %pulsetime2%     Pulse Time Lo: %pulsetime3% Power: %Power%   "
                  bFillBkgd = FALSE
                  nFore = 255
                  nBack = 0
                  nSelectorPlane = 9
                  fontName = "Arial"
                  fontStyle = "Bold"
                  fontSize = 11
                  byRedForeColor = 255
                  byGreenForeColor = 255
                  byBlueForeColor = 255
                  byRedBackColor = 0
                  byGreenBackColor = 0
                  byBlueBackColor = 0
                Load Regions
                  stFilename = "C:\MM\regions\Batch 1 ROI Targeting.rgn"
                  openImage = m 1 7 9 0 1 64 0 8 Untitled
                Load Regions
                  stFilename = "C:\MM\regions\Batch 3 ROI Targeting.rgn"
                  openImage = m 1 7 9 0 1 64 0 8 Untitled
                As Displayed
                  imSource = m 1 7 9 0 1 64 0 8 Untitled
                  imDest = "Target Regions Overlay"
                  nCopyRegion = 2
                Close
                  im = m 1 7 9 0 1 64 0 16 IMA Objects Mask
                  bSaveIt = FALSE
              CodeBlock Condition=false
                Comment: #4 (1,0,0)
                Color Combine
                  imRed = "Camera NIR"
                  imGreen = "Camera GFP"
                  imBlue = m 1 2 9 2 1 -1 -1 8 Untitled
                  imStack = m 1 2 9 2 1 -1 -1 8 Untitled
                  imDest = "Color Combine"
                  imSource8 = m 1 2 9 2 1 -1 -1 8 Untitled
                  bColorEncode = FALSE
                  nSource = 1
                  nResultDepth = 2
                  bHueRendering = FALSE
                Text
                  im = m 1 7 9 0 1 70 0 14 Target Regions
                  xPos = 10
                  yPos = 10
                  text = "%Well%     Pulse Time Hi: %pulsetime%     Pulse Time Med: %pulsetime2%     Pulse Time Lo: %pulsetime3% Power: %Power%   "
                  bFillBkgd = FALSE
                  nFore = 255
                  nBack = 0
                  nSelectorPlane = 9
                  fontName = "Arial"
                  fontStyle = "Bold"
                  fontSize = 11
                  byRedForeColor = 255
                  byGreenForeColor = 255
                  byBlueForeColor = 255
                  byRedBackColor = 0
                  byGreenBackColor = 0
                  byBlueBackColor = 0
                Load Regions
                  stFilename = "C:\MM\regions\Batch 1 ROI Targeting.rgn"
                  openImage = m 1 7 9 0 1 70 0 8 Untitled
                As Displayed
                  imSource = m 1 7 9 0 1 70 0 8 Untitled
                  imDest = "Target Regions Overlay"
                  nCopyRegion = 2
                Close
                  im = m 1 7 9 0 1 70 0 16 IMA Objects Mask
                  bSaveIt = FALSE
      CodeBlock Condition=false
        Comment: Reg1=0 and Reg2=1
        IfThenElse Expression=Reg2=1
          CodeBlock Condition=true
            Comment: Reg1=0 and Reg2=1 and Reg3=1
            IfThenElse Expression=Reg3=1
              CodeBlock Condition=true
                Comment: #5 (0,1,1)
                Color Combine
                  imRed = "Camera NIR"
                  imGreen = "Camera GFP"
                  imBlue = m 1 2 9 2 1 -1 -1 8 Untitled
                  imStack = m 1 2 9 2 1 -1 -1 8 Untitled
                  imDest = "Color Combine"
                  imSource8 = m 1 2 9 2 1 -1 -1 8 Untitled
                  bColorEncode = FALSE
                  nSource = 1
                  nResultDepth = 2
                  bHueRendering = FALSE
                Load Regions
                  stFilename = "C:\MM\regions\Batch 2 ROI Targeting.rgn"
                  openImage = m 1 7 9 0 1 75 0 8 Untitled
                Load Regions
                  stFilename = "C:\MM\regions\Batch 3 ROI Targeting.rgn"
                  openImage = m 1 7 9 0 1 75 0 8 Untitled
                Text
                  im = m 1 7 9 0 1 75 0 14 Target Regions
                  xPos = 10
                  yPos = 10
                  text = "%Well%     Pulse Time Hi: %pulsetime%     Pulse Time Med: %pulsetime2%     Pulse Time Lo: %pulsetime3% Power: %Power%   "
                  bFillBkgd = FALSE
                  nFore = 255
                  nBack = 0
                  nSelectorPlane = 9
                  fontName = "Arial"
                  fontStyle = "Bold"
                  fontSize = 11
                  byRedForeColor = 255
                  byGreenForeColor = 255
                  byBlueForeColor = 255
                  byRedBackColor = 0
                  byGreenBackColor = 0
                  byBlueBackColor = 0
                As Displayed
                  imSource = m 1 7 9 0 1 75 0 8 Untitled
                  imDest = "Target Regions Overlay"
                  nCopyRegion = 2
                Close
                  im = m 1 7 9 0 1 75 0 16 IMA Objects Mask
                  bSaveIt = FALSE
              CodeBlock Condition=false
                Comment: #6 (0,1,0)
                Color Combine
                  imRed = "Camera NIR"
                  imGreen = "Camera GFP"
                  imBlue = m 1 2 9 2 1 -1 -1 8 Untitled
                  imStack = m 1 2 9 2 1 -1 -1 8 Untitled
                  imDest = "Color Combine"
                  imSource8 = m 1 2 9 2 1 -1 -1 8 Untitled
                  bColorEncode = FALSE
                  nSource = 1
                  nResultDepth = 2
                  bHueRendering = FALSE
                Load Regions
                  stFilename = "C:\MM\regions\Batch 2 ROI Targeting.rgn"
                  openImage = m 1 7 9 0 1 81 0 8 Untitled
                Text
                  im = m 1 7 9 0 1 81 0 14 Target Regions
                  xPos = 10
                  yPos = 10
                  text = "%Well%     Pulse Time Hi: %pulsetime%     Pulse Time Med: %pulsetime2%     Pulse Time Lo: %pulsetime3% Power: %Power%   "
                  bFillBkgd = FALSE
                  nFore = 255
                  nBack = 0
                  nSelectorPlane = 9
                  fontName = "Arial"
                  fontStyle = "Bold"
                  fontSize = 11
                  byRedForeColor = 255
                  byGreenForeColor = 255
                  byBlueForeColor = 255
                  byRedBackColor = 0
                  byGreenBackColor = 0
                  byBlueBackColor = 0
                As Displayed
                  imSource = m 1 7 9 0 1 81 0 8 Untitled
                  imDest = "Target Regions Overlay"
                  nCopyRegion = 2
                Close
                  im = m 1 7 9 0 1 81 0 16 IMA Objects Mask
                  bSaveIt = FALSE
          CodeBlock Condition=false
            IfThenElse Expression=Reg3=1
              CodeBlock Condition=true
                Comment: #7 (0,0,1)
                Color Combine
                  imRed = "Camera NIR"
                  imGreen = "Camera GFP"
                  imBlue = m 1 2 9 2 1 -1 -1 8 Untitled
                  imStack = m 1 2 9 2 1 -1 -1 8 Untitled
                  imDest = "Color Combine"
                  imSource8 = m 1 2 9 2 1 -1 -1 8 Untitled
                  bColorEncode = FALSE
                  nSource = 1
                  nResultDepth = 2
                  bHueRendering = FALSE
                Load Regions
                  stFilename = "C:\MM\regions\Batch 3 ROI Targeting.rgn"
                  openImage = m 1 7 9 0 1 86 0 8 Untitled
                Text
                  im = m 1 7 9 0 1 86 0 14 Target Regions
                  xPos = 10
                  yPos = 10
                  text = "%Well%     Pulse Time Hi: %pulsetime%     Pulse Time Med: %pulsetime2%     Pulse Time Lo: %pulsetime3% Power: %Power%   "
                  bFillBkgd = FALSE
                  nFore = 255
                  nBack = 0
                  nSelectorPlane = 9
                  fontName = "Arial"
                  fontStyle = "Bold"
                  fontSize = 11
                  byRedForeColor = 255
                  byGreenForeColor = 255
                  byBlueForeColor = 255
                  byRedBackColor = 0
                  byGreenBackColor = 0
                  byBlueBackColor = 0
                As Displayed
                  imSource = m 1 7 9 0 1 86 0 8 Untitled
                  imDest = "Target Regions Overlay"
                  nCopyRegion = 2
                Close
                  im = m 1 7 9 0 1 86 0 16 IMA Objects Mask
                  bSaveIt = FALSE
              CodeBlock Condition=false
                Comment: #8 (0,0,0)
                Color Combine
                  imRed = "Camera NIR"
                  imGreen = "Camera GFP"
                  imBlue = m 1 2 9 2 1 -1 -1 8 Untitled
                  imStack = m 1 2 9 2 1 -1 -1 8 Untitled
                  imDest = "Color Combine"
                  imSource8 = m 1 2 9 2 1 -1 -1 8 Untitled
                  bColorEncode = FALSE
                  nSource = 1
                  nResultDepth = 2
                  bHueRendering = FALSE
                Text
                  im = m 1 7 9 0 1 91 0 14 Target Regions
                  xPos = 10
                  yPos = 10
                  text = "%Well%     Pulse Time Hi: %pulsetime%     Pulse Time Med: %pulsetime2%     Pulse Time Lo: %pulsetime3% Power: %Power%   "
                  bFillBkgd = FALSE
                  nFore = 255
                  nBack = 0
                  nSelectorPlane = 9
                  fontName = "Arial"
                  fontStyle = "Bold"
                  fontSize = 11
                  byRedForeColor = 255
                  byGreenForeColor = 255
                  byBlueForeColor = 255
                  byRedBackColor = 0
                  byGreenBackColor = 0
                  byBlueBackColor = 0
                As Displayed
                  imSource = m 1 7 9 0 1 91 0 8 Untitled
                  imDest = "Target Regions Overlay"
                  nCopyRegion = 2
                Close
                  im = m 1 7 9 0 1 91 0 16 IMA Objects Mask
                  bSaveIt = FALSE




