Journal
Description: New Journal
Version VersionNumber=2.4
Well = Screen.Status.WellName + "_" + + "Site" + str(Screen.Status.SiteNum)
Power = str(Component.405_Laser_Power.Position)  +"% " +"Laser Power"

IfThenElse Expression=Screen.Status.WaveNum=1
  CodeBlock Condition=true
    Comment: Segmentation of miRFP for Targeting
    Comment: EDIT ANALYSIS for MiRFP from here [LINE 1] to [Line 19]
    Basic Filters
      imSource = "Camera GFP"
      imResult = "LowPass"
      nOperation = 1
      nFilterWidth = 5
      nFilterHeight = 5
      nSubSample = 1
      Percentile = 50
      Depth16Sel = 1
      dScalingFactor = 0.9
      byResultScale = 10
      bAutoResultScale = FALSE
      mKernelTypeSharpen = 1
    Count Nuclei
      imNucleusSrc = m 1 7 9 0 1 1 0 10 Camera NIR
      imNucleusDest = "Segmentation"
      dApproxMinWidth = 10
      dApproxMaxWidth = 25
      dNucleusMinIntesity = 150
      iRootAlgorithm = 0
      bNucleusResult = TRUE
      ASSAY_config_summary_log_string = ""
      ASSAY_config_data_log_string = ""
    Close
      im = m 1 7 9 0 1 1 0 8 Untitled
      bSaveIt = FALSE
    Threshold Image
      srcThresh = m 1 7 9 0 1 2 0 8 Untitled
      min = 1
      max = 255
      bMore = FALSE
      idxState = 1
      nTab = 1
      nMinMaxRange = 1
      bTransparentThresh = FALSE
      dTransparencyPct = 0.5
      byThreshRed = 255
      byThreshGreen = 128
      byThreshBlue = 64
      nThreshDisplayMode = 1
    Binary Operations
      imSource = m 1 7 9 0 1 2 0 8 Untitled
      imDest = "miRFP Binary"
      bUseThresholdVars = FALSE
      nThresholdState = 1
      uThresholdMin = 0
      uThresholdMax = 255
    Close
      im = m 1 7 9 0 1 2 0 8 Untitled
      bSaveIt = FALSE
    IfThenElse Expression=size_dilate = 0
      CodeBlock Condition=true
        Create Regions Around Objects
          imSource = m 1 7 9 0 1 5 0 8 Untitled
        Transfer Regions
          imSourceImage = m 1 7 9 0 1 5 0 6 Dilate
          imDestImage = "Camera GFP"
          nRegionSel = 2
          bSrcClear = FALSE
          bDstClear = FALSE
        Close
          im = m 1 7 9 0 1 5 0 8 Untitled
          bSaveIt = FALSE
      CodeBlock Condition=false
        Integrated Morphometry - Load State
          stLoadFileName = "C:\MM\app\mmproc\journals\Journals Fowler\Fowler Lab Segmentation\Fowler MDA Measurement State Files\miRFP Segmentation_Single Bin.IMA"
        Integrated Morphometry - Measure
          imSource = m 1 7 9 0 1 5 0 8 Untitled
          nColor = 0
          imMask = m 1 2 9 2 1 -1 -1 8 Untitled
          bMeasureUsingMask = FALSE
        Set Image Zoom
          im = m 1 7 9 0 1 5 0 10 Camera NIR
          nZoom = 100
        As Displayed
          imSource = m 1 3 9 0 1 -1 -1 8 Untitled
          imDest = "Centroid_Binary"
          nCopyRegion = 2
        Set Color Threshold
          im = m 1 7 9 0 1 13 0 8 Untitled
          bInclusiveHue = TRUE
          nColorModel = 1
          nChan1LowRange = 254
          nChan1HighRange = 255
          nChan2LowRange = 254
          nChan2HighRange = 255
          nChan3LowRange = 254
          nChan3HighRange = 255
          nThreshState = 1
        Binary Operations
          imSource = m 1 7 9 0 1 13 0 8 Untitled
          imDest = "MiRFP Centroid"
          bUseThresholdVars = TRUE
          nThresholdState = 1
          uThresholdMin = 1
          uThresholdMax = 255
        Morphological Dilate
          imSrcIm = m 1 7 9 0 1 15 0 8 Untitled
          imDestIm = "Dilate"
          nShapeSize = 15 Override=Variable OverrideVariable=size_dilate
          nShape = 1
        Create Regions Around Objects
          imSource = "Dilate"
        Transfer Regions
          imSourceImage = "Dilate"
          imDestImage = "Camera GFP"
          nRegionSel = 2
          bSrcClear = FALSE
          bDstClear = FALSE
        Close
          im = m 1 7 9 0 1 16 0 8 Untitled
          bSaveIt = FALSE
        Close
          im = m 1 7 9 0 1 15 0 8 Untitled
          bSaveIt = FALSE
        Close
          im = m 1 7 9 0 1 5 0 8 Untitled
          bSaveIt = FALSE
        Close
          im = m 1 7 9 0 1 13 0 8 Untitled
          bSaveIt = FALSE
    Comment: Make the ROi's the same Color for overlay purposes later (Example Hi Intensity vs. Low Signal)
    Select Image
      im = "Camera GFP"
      prompt = ""
    IfThenElse Expression=Image.NumRegions>=1
      CodeBlock Condition=true
        ForNextLoop LoopVariable=Image.ActiveRegion, StartValue=1, EndValue=Image.NumRegions, StepValue=1
          Region.ColorBlue = 255
          Region.ColorGreen = 0
          Region.ColorRed = 0
      CodeBlock Condition=false
        Comment: No Regions Present
    Comment: *****************TARGETING FOR MOSAIC -NO NEED TO EDIT SCRIPT/CHANGE BELOW THIS LINE**************************************
    Select Image
      im = "Camera GFP"
      prompt = ""
    IfThenElse Expression=Image.NumRegions >=1
      CodeBlock Condition=true
        Reg = 1
        Total_Regions = Image.NumRegions +Total_Regions
        Comment: Regions are Saved and loaded to Mosaic for Targeting
        RunJournal JournalName=C:\MM\app\mmproc\journals\Mosaic journals\Save ROI Batch 1.jnl
        current_illumination = Device.Illumination.Setting
        Select Illumination
          bUseLegacyDelay = FALSE
          cMillisecDelay = 100
          stSetting = "Camera GFP" Override=None OverrideVariable=Setting Name
        Targeted Illumination
          IlluminationSetting = "Camera GFP" Override=None OverrideVariable=Illumination setting
          ImageIlluminationSetting = "" Override=None OverrideVariable=Imaging Illumination setting
          CoordinateSetting = "20X LWD" Override=Variable OverrideVariable=Device.Magnification.Setting
          PositionSetting = 3 Override=None OverrideVariable=Position: setting (1=image coords, 2=center of active region, 3=all region centers)
          PositionImageCoordinatesX = 100 Override=None OverrideVariable=Position: image coordinate X
          PositionImageCoordinatesY = 100 Override=None OverrideVariable=Position: image coordinate Y
          NumberOfLaserFires = 1 Override=None OverrideVariable=Number of laser pulses
          NeutralDensitySetting = 5 Override=None OverrideVariable=Attenuator plate: % transmission
          dExpDurMS = 5000 Override=Variable OverrideVariable=pulsetime
          PointSize = 1 Override=None OverrideVariable=Point size
        Delay
          dpDelayTime = 100 Override=Variable OverrideVariable=pulsetime
          nDelayUnits = 1
        Select Illumination
          bUseLegacyDelay = FALSE
          cMillisecDelay = 100
          stSetting = "Camera GFP" Override=Variable OverrideVariable=current_Illumination
        Clear All Regions
          clearImage = "Camera GFP"
      CodeBlock Condition=false
        Reg = 0
        Comment: Dont' Utilize the Mosaic on this Field of VIew
  CodeBlock Condition=false


Comment: Create Overlay Images for Final Display Purposes
IfThenElse Expression=Screen.Status.WaveName="Camera RFP_532x_Post"
  CodeBlock Condition=true
    IfThenElse Expression=Reg=1
      CodeBlock Condition=true
        Color Combine
          imRed = "Camera RFP_532x_Post"
          imGreen = "Camera GFP"
          imBlue = m 1 2 9 2 1 -1 -1 8 Untitled
          imStack = m 1 2 9 2 1 -1 -1 8 Untitled
          imDest = "Color Combine"
          imSource8 = m 1 2 9 2 1 -1 -1 8 Untitled
          bColorEncode = FALSE
          nSource = 1
          nResultDepth = 2
          bHueRendering = FALSE
        Text
          im = m 1 7 9 0 1 30 0 14 Target Regions
          xPos = 10
          yPos = 10
          text = "%Well% Pulse Time: %pulsetime%  Power: %Power%   Total Region: %Total_Regions%   Dilate: %size_dilate%"
          bFillBkgd = FALSE
          nFore = 255
          nBack = 0
          nSelectorPlane = 9
          fontName = "Arial"
          fontStyle = "Bold"
          fontSize = 12
          byRedForeColor = 255
          byGreenForeColor = 255
          byBlueForeColor = 255
          byRedBackColor = 0
          byGreenBackColor = 0
          byBlueBackColor = 0
        Load Regions
          stFilename = "C:\MM\regions\Batch 1 ROI Targeting.rgn"
          openImage = m 1 7 9 0 1 30 0 8 Untitled
        As Displayed
          imSource = m 1 7 9 0 1 30 0 8 Untitled
          imDest = "Target Regions Overlay"
          nCopyRegion = 2
        Close
          im = m 1 7 9 0 1 30 0 16 IMA Objects Mask
          bSaveIt = FALSE
      CodeBlock Condition=false
        Color Combine
          imRed = "Camera RFP_532x_Post"
          imGreen = "Camera GFP"
          imBlue = m 1 2 9 2 1 -1 -1 8 Untitled
          imStack = m 1 2 9 2 1 -1 -1 8 Untitled
          imDest = "Color Combine"
          imSource8 = m 1 2 9 2 1 -1 -1 8 Untitled
          bColorEncode = FALSE
          nSource = 1
          nResultDepth = 2
          bHueRendering = FALSE
        Text
          im = m 1 7 9 0 1 35 0 14 Target Regions
          xPos = 10
          yPos = 10
          text = "%Well% Pulse Time: %pulsetime%  Power: %Power%  Total Region: %Total_Regions%   Dilate: %size_dilate%"
          bFillBkgd = FALSE
          nFore = 255
          nBack = 0
          nSelectorPlane = 9
          fontName = "Arial"
          fontStyle = "Bold"
          fontSize = 12
          byRedForeColor = 255
          byGreenForeColor = 255
          byBlueForeColor = 255
          byRedBackColor = 0
          byGreenBackColor = 0
          byBlueBackColor = 0
        As Displayed
          imSource = m 1 7 9 0 1 35 0 8 Untitled
          imDest = "Target Regions Overlay"
          nCopyRegion = 2
        Close
          im = m 1 7 9 0 1 35 0 16 IMA Objects Mask
          bSaveIt = FALSE
