Journal
Description: 3 Level Segmentation- 

  Variables and logs that must be pre-opened at the beginning of the experiment: 
  blankdatalog (data logging should be paused at beginning of experiment - note that image data will be saved to the datalog; first set of measurements are cytoplasm; second set are nucleus) 
  hi_value
  pulsetime
  md_value
  pulsetime2
  lo_value
  pulsetime3

  Pulse1 is Correlated to Blue (High) - 800ms recommended (intensely nuclear) - NEED TO DEFINE, variable = hi_value 
  Pulse2 Length is Correlated to Green (Middle) - 200ms recommended (medium nuclear) - NEED TO DEFINE, variable = md_value 
  Pulse3 Length is Correlated  to Red (Low) - 50ms recommended (low nuclear) - NEED TO DEFINE, variable = lo_value 

  Note that GFP/Dendra2 image must be taken after miRFP image. So, images should go NIR --> GFP --> RFP (post)
Version VersionNumber=2.4
Well = Screen.Status.WellName + "_" + + "Site" + str(Screen.Status.SiteNum)
Power = str(Component.405_Laser_Power.Position)  +"% " +"Laser Power"

IfThenElse Expression=Screen.Status.WaveName="Camera GFP"
  CodeBlock Condition=true
    Comment: Crop GFP, maintaining original image name
    name = "Camera GFP"+"_"+"Crop"
    Create Region
      nRgnType = 1
      nX1 = 0 Override=Variable OverrideVariable=0
      nY1 = 1 Override=Variable OverrideVariable=1
      nX2 = 1740 Override=Variable OverrideVariable=Image.Width
      nY2 = 1534 Override=Variable OverrideVariable=Image.Height-2
    Image/Plane
      dupPlaneImage = "Camera GFP"
      copyIm = "Image/Plane"
    Image.Name = name
    Clear All Regions
      clearImage = m 1 5 9 0 1 -1 -1 8 Untitled
    Comment: Crop NIR, maintaining original image name
    name = "Camera NIR"+"_" +"Crop"
    Create Region
      nRgnType = 1
      nX1 = 0 Override=Variable OverrideVariable=0
      nY1 = 1 Override=Variable OverrideVariable=1
      nX2 = 1740 Override=Variable OverrideVariable=Image.Width
      nY2 = 1534 Override=Variable OverrideVariable=Image.Height-2
    Image/Plane
      dupPlaneImage = "Camera NIR"
      copyIm = "Image/Plane"
    Image.Name = name
    Clear All Regions
      clearImage = m 1 5 9 0 1 -1 -1 8 Untitled
    Comment: Begin segmentation
    Basic Filters
      imSource = "Camera GFP_crop"
      imResult = "LowPass"
      nOperation = 1
      nFilterWidth = 5
      nFilterHeight = 5
      nSubSample = 1
      Percentile = 50
      Depth16Sel = 1
      dScalingFactor = 0.9
      byResultScale = 10
      bAutoResultScale = FALSE
      mKernelTypeSharpen = 1
    Count Nuclei
      imNucleusSrc = m 1 7 9 0 1 7 0 10 Camera NIR
      imNucleusDest = "Segmentation"
      dApproxMinWidth = 8
      dApproxMaxWidth = 35
      dNucleusMinIntesity = 300
      iRootAlgorithm = 1
      bNucleusResult = TRUE
      ASSAY_config_summary_log_string = ""
      ASSAY_config_data_log_string = ""
    Close
      im = m 1 7 9 0 1 7 0 8 Untitled
      bSaveIt = FALSE
    Threshold Image
      srcThresh = m 1 7 9 0 1 8 0 8 Untitled
      min = 1
      max = 65535
      bMore = FALSE
      idxState = 1
      nTab = 1
      nMinMaxRange = 1
      bTransparentThresh = FALSE
      dTransparencyPct = 0.5
      byThreshRed = 255
      byThreshGreen = 128
      byThreshBlue = 64
      nThreshDisplayMode = 1
    Binary Operations
      imSource = m 1 7 9 0 1 8 0 8 Untitled
      imDest = "miRFP Binary"
      bUseThresholdVars = FALSE
      nThresholdState = 1
      uThresholdMin = 0
      uThresholdMax = 255
    Dilate Image
      imSource = m 1 7 9 0 1 11 0 8 Untitled
      imDest = "Dilate"
      nThresh = 1
      cRepeat = 3
      bDilateWithoutClose = TRUE
    Comment: Create image subsets containing only cytoplasm and nucleus pixels; these will be used to calculate stuff.
    Create Regions Around Objects
      imSource = m 1 7 9 0 1 12 0 8 Untitled
    Arithmetic
      iOperation = 2
      iSecondSource = 1
      nNumerator = 0
      nDenominator = 1
      nResultDepth = 1
      imSource1 = "Dilate"
      imSource2 = m 1 7 9 0 1 11 0 8 Untitled
      imDest = "Cytoplasm"
    Arithmetic
      iOperation = 8
      iSecondSource = 1
      nNumerator = 0
      nDenominator = 1
      nResultDepth = 16
      imSource1 = "Camera NIR_crop"
      imSource2 = m 1 7 9 0 1 14 0 8 Untitled
      imDest = "NIR_and_cytoplasm"
    Comment: IMPORTANT STEP: threshold the image such that pixels of 0 are not measured by the region analysis
    Threshold Image
      srcThresh = m 1 7 9 0 1 15 0 8 Untitled
      min = 1
      max = 65535
      bMore = FALSE
      idxState = 1
      nTab = 1
      nMinMaxRange = 1
      bTransparentThresh = FALSE
      dTransparencyPct = 0.5
      byThreshRed = 255
      byThreshGreen = 128
      byThreshBlue = 64
      nThreshDisplayMode = 1
    Erode Image
      imSource = m 1 7 9 0 1 11 0 8 Untitled
      imDest = "Nucleus"
      nThresh = 1
      cRepeat = 1
      bKeepLastPixel = TRUE
    Arithmetic
      iOperation = 8
      iSecondSource = 1
      nNumerator = 0
      nDenominator = 1
      nResultDepth = 16
      imSource1 = m 1 7 9 0 1 17 0 8 Untitled
      imSource2 = "Camera NIR_crop"
      imDest = "NIR_and_nucleus"
    Comment: IMPORTANT STEP: threshold the image such that pixels of 0 are not measured by the region analysis
    Threshold Image
      srcThresh = m 1 7 9 0 1 18 0 8 Untitled
      min = 1
      max = 65535
      bMore = FALSE
      idxState = 1
      nTab = 1
      nMinMaxRange = 1
      bTransparentThresh = FALSE
      dTransparencyPct = 0.5
      byThreshRed = 255
      byThreshGreen = 128
      byThreshBlue = 64
      nThreshDisplayMode = 1
    Comment: Close un-needed steps (cytoplasm, nucleus, miRFP binary). KEEP Dilate (for regions) and NIR_and_cytoplasm/nucleus
    Close
      im = m 1 7 9 0 1 11 0 8 Untitled
      bSaveIt = FALSE
    Close
      im = m 1 7 9 0 1 14 0 8 Untitled
      bSaveIt = FALSE
    Close
      im = m 1 7 9 0 1 17 0 8 Untitled
      bSaveIt = FALSE
    Comment: Initialize region storage images - use thresholded segmentation image to give a template to shrink regions to fit nuclei
    Image/Plane
      dupPlaneImage = m 1 7 9 0 1 8 0 8 Untitled
      copyIm = "Image/Plane"
    Rename Image
      imRenameImage = m 1 3 9 0 1 -1 -1 8 Untitled
      newImageName = "Reg1_storage"
    Reg1 = 0
    Image/Plane
      dupPlaneImage = m 1 7 9 0 1 8 0 8 Untitled
      copyIm = "Image/Plane"
    Rename Image
      imRenameImage = m 1 3 9 0 1 -1 -1 8 Untitled
      newImageName = "Reg2_storage"
    Reg2 = 0
    Rename Image
      imRenameImage = m 1 7 9 0 1 8 0 8 Untitled
      newImageName = "Reg3_storage"
    Reg3 = 0
    Comment: Transfer regions from Dilate to cytoplasm_NIR so measurements can be made
    Transfer Regions
      imSourceImage = m 1 7 9 0 1 12 0 8 Untitled
      imDestImage = m 1 7 9 0 1 15 0 8 Untitled
      nRegionSel = 2
      bSrcClear = TRUE
      bDstClear = FALSE
    Close
      im = m 1 7 9 0 1 12 0 8 Untitled
      bSaveIt = FALSE
    Close
      im = "Camera GFP_crop"
      bSaveIt = FALSE
    Close
      im = "Camera NIR_crop"
      bSaveIt = FALSE
    Select Image
      im = m 1 7 9 0 1 15 0 8 Untitled
      prompt = ""
    Comment: Loop through regions in NIR_and_cytoplasm: (1) measure intensitieis, ignoring unthresholded pixels (2) transfer to nucleus, measure avg intensity, ignoring thresholded pixels (3) use pre-defined ratios to bin cells into Reg1 (hi), Reg2 (md), or Reg3 (lo) activation bins
    IfThenElse Expression=Image.NumRegions > 0
      CodeBlock Condition=true
        Resume Data Logging
        ForNextLoop LoopVariable=Image.ActiveRegion, StartValue=1, EndValue=Image.NumRegions, StepValue=1
          Region Measurements
            imSource = m 1 7 9 0 1 15 0 8 Untitled
            nSelectorPlane = 9
            nTab = 2
            nPopInclude = 1
            nDisplayViews = 0
            nRegionLabel = 3
            nChannel = 0
            bUseThreshold = TRUE
            abMeasurements = TRUE TRUE FALSE TRUE TRUE TRUE TRUE FALSE FALSE FALSE FALSE FALSE FALSE FALSE FALSE TRUE FALSE FALSE TRUE FALSE FALSE FALSE FALSE FALSE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
            abRegionLabels = FALSE FALSE FALSE FALSE FALSE FALSE FALSE FALSE FALSE FALSE FALSE FALSE FALSE FALSE FALSE FALSE FALSE
            nSpecifiedPlane = 1
            nPopGraphType = 0
            anPopGraphXAxis = 0 0 0 0
            anPopGraphYAxis = -1 0 0 0
            nGraphNumBin = 10
            nPopGraphUnit = 0
            strGraphSettings = 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
            bLogCalibration = FALSE
            bLogHeaders = FALSE
          cytoplasm_avg_intensity = RegionMeasurements.Measurements.AverageIntensity
          Transfer Regions
            imSourceImage = m 1 7 9 0 1 15 0 8 Untitled
            imDestImage = m 1 7 9 0 1 18 0 8 Untitled
            nRegionSel = 1
            bSrcClear = FALSE
            bDstClear = FALSE
          Region Measurements
            imSource = m 1 7 9 0 1 18 0 8 Untitled
            nSelectorPlane = 9
            nTab = 2
            nPopInclude = 1
            nDisplayViews = 0
            nRegionLabel = 3
            nChannel = 0
            bUseThreshold = TRUE
            abMeasurements = TRUE TRUE FALSE TRUE TRUE TRUE TRUE FALSE FALSE FALSE FALSE FALSE FALSE FALSE FALSE TRUE FALSE FALSE TRUE FALSE FALSE FALSE FALSE FALSE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
            abRegionLabels = FALSE FALSE FALSE FALSE FALSE FALSE FALSE FALSE FALSE FALSE FALSE FALSE FALSE FALSE FALSE FALSE FALSE
            nSpecifiedPlane = 1
            nPopGraphType = 0
            anPopGraphXAxis = 0 0 0 0
            anPopGraphYAxis = -1 0 0 0
            nGraphNumBin = 10
            nPopGraphUnit = 0
            strGraphSettings = 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
            bLogCalibration = FALSE
            bLogHeaders = FALSE
          nucleus_avg_intensity = RegionMeasurements.Measurements.AverageIntensity
          Comment: First, ensure that cell has a readable miRFP value
          Comment: Check if ratio is greater than hi value. If it is: transfer region to Segmentation; shrink region to fit; then transfer region to Reg1_storage. If not, check next threshold.
          IfThenElse Expression=cytoplasm_avg_intensity > 11000
            CodeBlock Condition=true
              IfThenElse Expression=nucleus_avg_intensity/cytoplasm_avg_intensity > hi_value
                CodeBlock Condition=true
                  Transfer Regions
                    imSourceImage = m 1 7 9 0 1 18 0 8 Untitled
                    imDestImage = "Reg1_storage"
                    nRegionSel = 1
                    bSrcClear = FALSE
                    bDstClear = FALSE
                  Shrink Region to Fit
                    im = "Reg1_storage"
                CodeBlock Condition=false
                  Comment: Check if ratio is greater than md value. If it is, copy region to Reg2_storage. If not, check next threshold.
                  IfThenElse Expression=nucleus_avg_intensity/cytoplasm_avg_intensity > md_value
                    CodeBlock Condition=true
                      Transfer Regions
                        imSourceImage = m 1 7 9 0 1 18 0 8 Untitled
                        imDestImage = "Reg2_storage"
                        nRegionSel = 1
                        bSrcClear = FALSE
                        bDstClear = FALSE
                      Shrink Region to Fit
                        im = "Reg2_storage"
                    CodeBlock Condition=false
                      Comment: Check if ratio is greater than hi value. If it is, copy region to Reg3_storage. If not, do not transfer region; it will not be activated.
                      IfThenElse Expression=nucleus_avg_intensity/cytoplasm_avg_intensity > lo_value
                        CodeBlock Condition=true
                          Transfer Regions
                            imSourceImage = m 1 7 9 0 1 18 0 8 Untitled
                            imDestImage = "Reg3_storage"
                            nRegionSel = 1
                            bSrcClear = FALSE
                            bDstClear = FALSE
                          Shrink Region to Fit
                            im = "Reg3_storage"
            CodeBlock Condition=false
              IfThenElse Expression=nucleus_avg_intensity > 11000
                CodeBlock Condition=true
                  IfThenElse Expression=nucleus_avg_intensity/cytoplasm_avg_intensity > hi_value
                    CodeBlock Condition=true
                      Transfer Regions
                        imSourceImage = m 1 7 9 0 1 18 0 8 Untitled
                        imDestImage = "Reg1_storage"
                        nRegionSel = 1
                        bSrcClear = FALSE
                        bDstClear = FALSE
                      Shrink Region to Fit
                        im = "Reg1_storage"
                    CodeBlock Condition=false
                      Comment: Check if ratio is greater than md value. If it is, copy region to Reg2_storage. If not, check next threshold.
                      IfThenElse Expression=nucleus_avg_intensity/cytoplasm_avg_intensity > md_value
                        CodeBlock Condition=true
                          Transfer Regions
                            imSourceImage = m 1 7 9 0 1 18 0 8 Untitled
                            imDestImage = "Reg2_storage"
                            nRegionSel = 1
                            bSrcClear = FALSE
                            bDstClear = FALSE
                          Shrink Region to Fit
                            im = "Reg2_storage"
                        CodeBlock Condition=false
                          Comment: Check if ratio is greater than hi value. If it is, copy region to Reg3_storage. If not, do not transfer region; it will not be activated.
                          IfThenElse Expression=nucleus_avg_intensity/cytoplasm_avg_intensity > lo_value
                            CodeBlock Condition=true
                              Transfer Regions
                                imSourceImage = m 1 7 9 0 1 18 0 8 Untitled
                                imDestImage = "Reg3_storage"
                                nRegionSel = 1
                                bSrcClear = FALSE
                                bDstClear = FALSE
                              Shrink Region to Fit
                                im = "Reg3_storage"
        Pause Data Logging
    Close
      im = m 1 7 9 0 1 15 0 8 Untitled
      bSaveIt = FALSE
    Close
      im = m 1 7 9 0 1 18 0 8 Untitled
      bSaveIt = FALSE
    Comment: Save regions in Reg1_storage, then close it
    Select Image
      im = "Reg1_storage"
      prompt = ""
    IfThenElse Expression=Image.NumRegions>=1
      CodeBlock Condition=true
        Reg1 = 1
        ForNextLoop LoopVariable=Image.ActiveRegion, StartValue=1, EndValue=Image.NumRegions, StepValue=1
          Region.ColorBlue = 255
          Region.ColorGreen = 0
          Region.ColorRed = 0
        Save Regions
          stFilename = "C:\MM\regions\Batch 1 ROI Targeting.rgn"
          saveImage = "Reg1_storage"
      CodeBlock Condition=false
        Comment: No Regions Present at the Low Threshold
    Close
      im = "Reg1_storage"
      bSaveIt = FALSE
    Comment: Save regions in Reg2_storage, then close it
    Select Image
      im = "Reg2_storage"
      prompt = ""
    IfThenElse Expression=Image.NumRegions>=1
      CodeBlock Condition=true
        Reg2 = 1
        ForNextLoop LoopVariable=Image.ActiveRegion, StartValue=1, EndValue=Image.NumRegions, StepValue=1
          Region.ColorBlue = 0
          Region.ColorGreen = 0
          Region.ColorRed = 255
        Save Regions
          stFilename = "C:\MM\regions\Batch 2 ROI Targeting.rgn"
          saveImage = "Reg2_storage"
      CodeBlock Condition=false
        Comment: No Regions Present at the Low Threshold
    Close
      im = "Reg2_storage"
      bSaveIt = FALSE
    Comment: Save regions in Reg3_storage, then close it
    Select Image
      im = "Reg3_storage"
      prompt = ""
    IfThenElse Expression=Image.NumRegions>=1
      CodeBlock Condition=true
        Reg3 = 1
        ForNextLoop LoopVariable=Image.ActiveRegion, StartValue=1, EndValue=Image.NumRegions, StepValue=1
          Region.ColorBlue = 0
          Region.ColorGreen = 255
          Region.ColorRed = 0
        Save Regions
          stFilename = "C:\MM\regions\Batch 3 ROI Targeting.rgn"
          saveImage = "Reg3_storage"
      CodeBlock Condition=false
        Comment: No Regions Present at the Low Threshold
    Close
      im = "Reg3_storage"
      bSaveIt = FALSE
    Comment: END Segmentation of Image
    Comment: *****************TARGETING FOR MOSAIC -Batch 1 ROI's......NO NEED TO EDIT SCRIPT/CHANGE BELOW THIS LINE**************************************
    Select Image
      im = "Camera NIR"
      prompt = ""
    IfThenElse Expression=Reg1=1
      CodeBlock Condition=true
        Comment: Regions are Saved and loaded to Mosaic for Targeting
        Load Regions
          stFilename = "C:\MM\regions\Batch 1 ROI Targeting.rgn"
          openImage = "Camera NIR"
        current_illumination = Device.Illumination.Setting
        Select Illumination
          bUseLegacyDelay = FALSE
          cMillisecDelay = 100
          stSetting = "Camera GFP" Override=None OverrideVariable=Setting Name
        Targeted Illumination
          IlluminationSetting = "Camera GFP" Override=None OverrideVariable=Illumination setting
          ImageIlluminationSetting = "" Override=None OverrideVariable=Imaging Illumination setting
          CoordinateSetting = "20X LWD" Override=Variable OverrideVariable=Device.Magnification.Setting
          PositionSetting = 3 Override=None OverrideVariable=Position: setting (1=image coords, 2=center of active region, 3=all region centers)
          PositionImageCoordinatesX = 100 Override=None OverrideVariable=Position: image coordinate X
          PositionImageCoordinatesY = 100 Override=None OverrideVariable=Position: image coordinate Y
          NumberOfLaserFires = 1 Override=None OverrideVariable=Number of laser pulses
          NeutralDensitySetting = 5 Override=None OverrideVariable=Attenuator plate: % transmission
          dExpDurMS = 5000 Override=Variable OverrideVariable=pulsetime
          PointSize = 1 Override=None OverrideVariable=Point size
        Delay
          dpDelayTime = 100 Override=Variable OverrideVariable=pulsetime
          nDelayUnits = 1
        Select Illumination
          bUseLegacyDelay = FALSE
          cMillisecDelay = 100
          stSetting = "Camera GFP" Override=Variable OverrideVariable=current_Illumination
        Clear All Regions
          clearImage = "Camera NIR"
      CodeBlock Condition=false
        Reg1 = 0
        Comment: Dont' Utilize the Mosaic on this Field of VIew
    Comment: *****************TARGETING FOR MOSAIC -Batch 2 ROI's......NO NEED TO EDIT SCRIPT/CHANGE BELOW THIS LINE**************************************
    Select Image
      im = "Camera NIR"
      prompt = ""
    IfThenElse Expression=Reg2=1
      CodeBlock Condition=true
        Comment: Regions are Saved and loaded to Mosaic for Targeting
        Load Regions
          stFilename = "C:\MM\regions\Batch 2 ROI Targeting.rgn"
          openImage = "Camera NIR"
        current_illumination = Device.Illumination.Setting
        Select Illumination
          bUseLegacyDelay = FALSE
          cMillisecDelay = 100
          stSetting = "Camera GFP" Override=None OverrideVariable=Setting Name
        Targeted Illumination
          IlluminationSetting = "Camera GFP" Override=None OverrideVariable=Illumination setting
          ImageIlluminationSetting = "" Override=None OverrideVariable=Imaging Illumination setting
          CoordinateSetting = "20X LWD" Override=Variable OverrideVariable=Device.Magnification.Setting
          PositionSetting = 3 Override=None OverrideVariable=Position: setting (1=image coords, 2=center of active region, 3=all region centers)
          PositionImageCoordinatesX = 100 Override=None OverrideVariable=Position: image coordinate X
          PositionImageCoordinatesY = 100 Override=None OverrideVariable=Position: image coordinate Y
          NumberOfLaserFires = 1 Override=None OverrideVariable=Number of laser pulses
          NeutralDensitySetting = 5 Override=None OverrideVariable=Attenuator plate: % transmission
          dExpDurMS = 5000 Override=Variable OverrideVariable=pulsetime2
          PointSize = 1 Override=None OverrideVariable=Point size
        Delay
          dpDelayTime = 100 Override=Variable OverrideVariable=pulsetime2
          nDelayUnits = 1
        Select Illumination
          bUseLegacyDelay = FALSE
          cMillisecDelay = 100
          stSetting = "Camera GFP" Override=Variable OverrideVariable=current_Illumination
        Clear All Regions
          clearImage = "Camera NIR"
      CodeBlock Condition=false
        Comment: Dont' Utilize the Mosaic on this Field of VIew
    Comment: *****************TARGETING FOR MOSAIC -Batch 3 ROI's......NO NEED TO EDIT SCRIPT/CHANGE BELOW THIS LINE**************************************
    Select Image
      im = "Camera NIR"
      prompt = ""
    IfThenElse Expression=Reg3=1
      CodeBlock Condition=true
        Comment: Regions are Saved and loaded to Mosaic for Targeting
        Load Regions
          stFilename = "C:\MM\regions\Batch 3 ROI Targeting.rgn"
          openImage = "Camera NIR"
        current_illumination = Device.Illumination.Setting
        Select Illumination
          bUseLegacyDelay = FALSE
          cMillisecDelay = 100
          stSetting = "Camera GFP" Override=None OverrideVariable=Setting Name
        Targeted Illumination
          IlluminationSetting = "Camera GFP" Override=None OverrideVariable=Illumination setting
          ImageIlluminationSetting = "" Override=None OverrideVariable=Imaging Illumination setting
          CoordinateSetting = "20X LWD" Override=Variable OverrideVariable=Device.Magnification.Setting
          PositionSetting = 3 Override=None OverrideVariable=Position: setting (1=image coords, 2=center of active region, 3=all region centers)
          PositionImageCoordinatesX = 100 Override=None OverrideVariable=Position: image coordinate X
          PositionImageCoordinatesY = 100 Override=None OverrideVariable=Position: image coordinate Y
          NumberOfLaserFires = 1 Override=None OverrideVariable=Number of laser pulses
          NeutralDensitySetting = 5 Override=None OverrideVariable=Attenuator plate: % transmission
          dExpDurMS = 5000 Override=Variable OverrideVariable=pulsetime3
          PointSize = 1 Override=None OverrideVariable=Point size
        Delay
          dpDelayTime = 100 Override=Variable OverrideVariable=pulsetime3
          nDelayUnits = 1
        Select Illumination
          bUseLegacyDelay = FALSE
          cMillisecDelay = 100
          stSetting = "Camera GFP" Override=Variable OverrideVariable=current_Illumination
        Clear All Regions
          clearImage = "Camera NIR"
      CodeBlock Condition=false
        Reg1 = 0
        Comment: Dont' Utilize the Mosaic on this Field of VIew
    Select Image
      im = "Camera NIR"
      prompt = ""
  CodeBlock Condition=false


Comment: Create Overlay Images for Final Display Purposes: Conditions: (1,1,1) (1,1,0) (1,0,1) (1,0,0) (0,1,1) (0,1,0) (0,0,1) (0,0,0)
Disabled IfThenElse Expression=Screen.Status.WaveName="Camera RFP_532x_Post"
  CodeBlock Condition=true
    IfThenElse Expression=Reg1=1
      CodeBlock Condition=true
        IfThenElse Expression=Reg2=1
          CodeBlock Condition=true
            IfThenElse Expression=Reg3=1
              CodeBlock Condition=true
                Comment: Lo, Mid and High Regions Found  Reg1=1 and Reg 2=1 and Reg3=1
                Comment: Reg1=1 and Reg2=1 and  Reg3=1
                Comment: #1  (1,1,1)
                Color Combine
                  imRed = "Camera NIR"
                  imGreen = "Camera GFP"
                  imBlue = m 1 2 9 2 1 -1 -1 8 Untitled
                  imStack = m 1 2 9 2 1 -1 -1 8 Untitled
                  imDest = "Color Combine"
                  imSource8 = m 1 2 9 2 1 -1 -1 8 Untitled
                  bColorEncode = FALSE
                  nSource = 1
                  nResultDepth = 2
                  bHueRendering = FALSE
                Text
                  im = m 1 7 9 0 1 83 0 14 Target Regions
                  xPos = 10
                  yPos = 10
                  text = "%Well%     Pulse Time Hi: %pulsetime%     Pulse Time Med: %pulsetime2%     Pulse Time Lo: %pulsetime3% Power: %Power%   "
                  bFillBkgd = FALSE
                  nFore = 255
                  nBack = 0
                  nSelectorPlane = 9
                  fontName = "Arial"
                  fontStyle = "Bold"
                  fontSize = 11
                  byRedForeColor = 255
                  byGreenForeColor = 255
                  byBlueForeColor = 255
                  byRedBackColor = 0
                  byGreenBackColor = 0
                  byBlueBackColor = 0
                Load Regions
                  stFilename = "C:\MM\regions\Batch 1 ROI Targeting.rgn"
                  openImage = m 1 7 9 0 1 83 0 8 Untitled
                Load Regions
                  stFilename = "C:\MM\regions\Batch 2 ROI Targeting.rgn"
                  openImage = m 1 7 9 0 1 83 0 8 Untitled
                Load Regions
                  stFilename = "C:\MM\regions\Batch 3 ROI Targeting.rgn"
                  openImage = m 1 7 9 0 1 83 0 8 Untitled
                As Displayed
                  imSource = m 1 7 9 0 1 83 0 8 Untitled
                  imDest = "Target Regions Overlay"
                  nCopyRegion = 2
                Close
                  im = m 1 7 9 0 1 83 0 16 IMA Objects Mask
                  bSaveIt = FALSE
              CodeBlock Condition=false
                Comment: #2(1,1,0)
                Color Combine
                  imRed = "Camera NIR"
                  imGreen = "Camera GFP"
                  imBlue = m 1 2 9 2 1 -1 -1 8 Untitled
                  imStack = m 1 2 9 2 1 -1 -1 8 Untitled
                  imDest = "Color Combine"
                  imSource8 = m 1 2 9 2 1 -1 -1 8 Untitled
                  bColorEncode = FALSE
                  nSource = 1
                  nResultDepth = 2
                  bHueRendering = FALSE
                Text
                  im = m 1 7 9 0 1 90 0 14 Target Regions
                  xPos = 10
                  yPos = 10
                  text = "%Well%     Pulse Time Hi: %pulsetime%     Pulse Time Med: %pulsetime2%     Pulse Time Lo: %pulsetime3% Power: %Power%   "
                  bFillBkgd = FALSE
                  nFore = 255
                  nBack = 0
                  nSelectorPlane = 9
                  fontName = "Arial"
                  fontStyle = "Bold"
                  fontSize = 11
                  byRedForeColor = 255
                  byGreenForeColor = 255
                  byBlueForeColor = 255
                  byRedBackColor = 0
                  byGreenBackColor = 0
                  byBlueBackColor = 0
                Load Regions
                  stFilename = "C:\MM\regions\Batch 1 ROI Targeting.rgn"
                  openImage = m 1 7 9 0 1 90 0 8 Untitled
                Load Regions
                  stFilename = "C:\MM\regions\Batch 2 ROI Targeting.rgn"
                  openImage = m 1 7 9 0 1 90 0 8 Untitled
                As Displayed
                  imSource = m 1 7 9 0 1 90 0 8 Untitled
                  imDest = "Target Regions Overlay"
                  nCopyRegion = 2
                Close
                  im = m 1 7 9 0 1 90 0 16 IMA Objects Mask
                  bSaveIt = FALSE
          CodeBlock Condition=false
            Comment: Reg1=1 and Reg 2=0 Reg3=1
            IfThenElse Expression=Reg3=1
              CodeBlock Condition=true
                Comment: #3 (1,0,1)
                Color Combine
                  imRed = "Camera NIR"
                  imGreen = "Camera GFP"
                  imBlue = m 1 2 9 2 1 -1 -1 8 Untitled
                  imStack = m 1 2 9 2 1 -1 -1 8 Untitled
                  imDest = "Color Combine"
                  imSource8 = m 1 2 9 2 1 -1 -1 8 Untitled
                  bColorEncode = FALSE
                  nSource = 1
                  nResultDepth = 2
                  bHueRendering = FALSE
                Text
                  im = m 1 7 9 0 1 96 0 14 Target Regions
                  xPos = 10
                  yPos = 10
                  text = "%Well%     Pulse Time Hi: %pulsetime%     Pulse Time Med: %pulsetime2%     Pulse Time Lo: %pulsetime3% Power: %Power%   "
                  bFillBkgd = FALSE
                  nFore = 255
                  nBack = 0
                  nSelectorPlane = 9
                  fontName = "Arial"
                  fontStyle = "Bold"
                  fontSize = 11
                  byRedForeColor = 255
                  byGreenForeColor = 255
                  byBlueForeColor = 255
                  byRedBackColor = 0
                  byGreenBackColor = 0
                  byBlueBackColor = 0
                Load Regions
                  stFilename = "C:\MM\regions\Batch 1 ROI Targeting.rgn"
                  openImage = m 1 7 9 0 1 96 0 8 Untitled
                Load Regions
                  stFilename = "C:\MM\regions\Batch 3 ROI Targeting.rgn"
                  openImage = m 1 7 9 0 1 96 0 8 Untitled
                As Displayed
                  imSource = m 1 7 9 0 1 96 0 8 Untitled
                  imDest = "Target Regions Overlay"
                  nCopyRegion = 2
                Close
                  im = m 1 7 9 0 1 96 0 16 IMA Objects Mask
                  bSaveIt = FALSE
              CodeBlock Condition=false
                Comment: #4 (1,0,0)
                Color Combine
                  imRed = "Camera NIR"
                  imGreen = "Camera GFP"
                  imBlue = m 1 2 9 2 1 -1 -1 8 Untitled
                  imStack = m 1 2 9 2 1 -1 -1 8 Untitled
                  imDest = "Color Combine"
                  imSource8 = m 1 2 9 2 1 -1 -1 8 Untitled
                  bColorEncode = FALSE
                  nSource = 1
                  nResultDepth = 2
                  bHueRendering = FALSE
                Text
                  im = m 1 7 9 0 1 102 0 14 Target Regions
                  xPos = 10
                  yPos = 10
                  text = "%Well%     Pulse Time Hi: %pulsetime%     Pulse Time Med: %pulsetime2%     Pulse Time Lo: %pulsetime3% Power: %Power%   "
                  bFillBkgd = FALSE
                  nFore = 255
                  nBack = 0
                  nSelectorPlane = 9
                  fontName = "Arial"
                  fontStyle = "Bold"
                  fontSize = 11
                  byRedForeColor = 255
                  byGreenForeColor = 255
                  byBlueForeColor = 255
                  byRedBackColor = 0
                  byGreenBackColor = 0
                  byBlueBackColor = 0
                Load Regions
                  stFilename = "C:\MM\regions\Batch 1 ROI Targeting.rgn"
                  openImage = m 1 7 9 0 1 102 0 8 Untitled
                As Displayed
                  imSource = m 1 7 9 0 1 102 0 8 Untitled
                  imDest = "Target Regions Overlay"
                  nCopyRegion = 2
                Close
                  im = m 1 7 9 0 1 102 0 16 IMA Objects Mask
                  bSaveIt = FALSE
      CodeBlock Condition=false
        Comment: Reg1=0 and Reg2=1
        IfThenElse Expression=Reg2=1
          CodeBlock Condition=true
            Comment: Reg1=0 and Reg2=1 and Reg3=1
            IfThenElse Expression=Reg3=1
              CodeBlock Condition=true
                Comment: #5 (0,1,1)
                Color Combine
                  imRed = "Camera NIR"
                  imGreen = "Camera GFP"
                  imBlue = m 1 2 9 2 1 -1 -1 8 Untitled
                  imStack = m 1 2 9 2 1 -1 -1 8 Untitled
                  imDest = "Color Combine"
                  imSource8 = m 1 2 9 2 1 -1 -1 8 Untitled
                  bColorEncode = FALSE
                  nSource = 1
                  nResultDepth = 2
                  bHueRendering = FALSE
                Load Regions
                  stFilename = "C:\MM\regions\Batch 2 ROI Targeting.rgn"
                  openImage = m 1 7 9 0 1 107 0 8 Untitled
                Load Regions
                  stFilename = "C:\MM\regions\Batch 3 ROI Targeting.rgn"
                  openImage = m 1 7 9 0 1 107 0 8 Untitled
                Text
                  im = m 1 7 9 0 1 107 0 14 Target Regions
                  xPos = 10
                  yPos = 10
                  text = "%Well%     Pulse Time Hi: %pulsetime%     Pulse Time Med: %pulsetime2%     Pulse Time Lo: %pulsetime3% Power: %Power%   "
                  bFillBkgd = FALSE
                  nFore = 255
                  nBack = 0
                  nSelectorPlane = 9
                  fontName = "Arial"
                  fontStyle = "Bold"
                  fontSize = 11
                  byRedForeColor = 255
                  byGreenForeColor = 255
                  byBlueForeColor = 255
                  byRedBackColor = 0
                  byGreenBackColor = 0
                  byBlueBackColor = 0
                As Displayed
                  imSource = m 1 7 9 0 1 107 0 8 Untitled
                  imDest = "Target Regions Overlay"
                  nCopyRegion = 2
                Close
                  im = m 1 7 9 0 1 107 0 16 IMA Objects Mask
                  bSaveIt = FALSE
              CodeBlock Condition=false
                Comment: #6 (0,1,0)
                Color Combine
                  imRed = "Camera NIR"
                  imGreen = "Camera GFP"
                  imBlue = m 1 2 9 2 1 -1 -1 8 Untitled
                  imStack = m 1 2 9 2 1 -1 -1 8 Untitled
                  imDest = "Color Combine"
                  imSource8 = m 1 2 9 2 1 -1 -1 8 Untitled
                  bColorEncode = FALSE
                  nSource = 1
                  nResultDepth = 2
                  bHueRendering = FALSE
                Load Regions
                  stFilename = "C:\MM\regions\Batch 2 ROI Targeting.rgn"
                  openImage = m 1 7 9 0 1 113 0 8 Untitled
                Text
                  im = m 1 7 9 0 1 113 0 14 Target Regions
                  xPos = 10
                  yPos = 10
                  text = "%Well%     Pulse Time Hi: %pulsetime%     Pulse Time Med: %pulsetime2%     Pulse Time Lo: %pulsetime3% Power: %Power%   "
                  bFillBkgd = FALSE
                  nFore = 255
                  nBack = 0
                  nSelectorPlane = 9
                  fontName = "Arial"
                  fontStyle = "Bold"
                  fontSize = 11
                  byRedForeColor = 255
                  byGreenForeColor = 255
                  byBlueForeColor = 255
                  byRedBackColor = 0
                  byGreenBackColor = 0
                  byBlueBackColor = 0
                As Displayed
                  imSource = m 1 7 9 0 1 113 0 8 Untitled
                  imDest = "Target Regions Overlay"
                  nCopyRegion = 2
                Close
                  im = m 1 7 9 0 1 113 0 16 IMA Objects Mask
                  bSaveIt = FALSE
          CodeBlock Condition=false
            IfThenElse Expression=Reg3=1
              CodeBlock Condition=true
                Comment: #7 (0,0,1)
                Color Combine
                  imRed = "Camera NIR"
                  imGreen = "Camera GFP"
                  imBlue = m 1 2 9 2 1 -1 -1 8 Untitled
                  imStack = m 1 2 9 2 1 -1 -1 8 Untitled
                  imDest = "Color Combine"
                  imSource8 = m 1 2 9 2 1 -1 -1 8 Untitled
                  bColorEncode = FALSE
                  nSource = 1
                  nResultDepth = 2
                  bHueRendering = FALSE
                Load Regions
                  stFilename = "C:\MM\regions\Batch 3 ROI Targeting.rgn"
                  openImage = m 1 7 9 0 1 118 0 8 Untitled
                Text
                  im = m 1 7 9 0 1 118 0 14 Target Regions
                  xPos = 10
                  yPos = 10
                  text = "%Well%     Pulse Time Hi: %pulsetime%     Pulse Time Med: %pulsetime2%     Pulse Time Lo: %pulsetime3% Power: %Power%   "
                  bFillBkgd = FALSE
                  nFore = 255
                  nBack = 0
                  nSelectorPlane = 9
                  fontName = "Arial"
                  fontStyle = "Bold"
                  fontSize = 11
                  byRedForeColor = 255
                  byGreenForeColor = 255
                  byBlueForeColor = 255
                  byRedBackColor = 0
                  byGreenBackColor = 0
                  byBlueBackColor = 0
                As Displayed
                  imSource = m 1 7 9 0 1 118 0 8 Untitled
                  imDest = "Target Regions Overlay"
                  nCopyRegion = 2
                Close
                  im = m 1 7 9 0 1 118 0 16 IMA Objects Mask
                  bSaveIt = FALSE
              CodeBlock Condition=false
                Comment: #8 (0,0,0)
                Color Combine
                  imRed = "Camera NIR"
                  imGreen = "Camera GFP"
                  imBlue = m 1 2 9 2 1 -1 -1 8 Untitled
                  imStack = m 1 2 9 2 1 -1 -1 8 Untitled
                  imDest = "Color Combine"
                  imSource8 = m 1 2 9 2 1 -1 -1 8 Untitled
                  bColorEncode = FALSE
                  nSource = 1
                  nResultDepth = 2
                  bHueRendering = FALSE
                Text
                  im = m 1 7 9 0 1 123 0 14 Target Regions
                  xPos = 10
                  yPos = 10
                  text = "%Well%     Pulse Time Hi: %pulsetime%     Pulse Time Med: %pulsetime2%     Pulse Time Lo: %pulsetime3% Power: %Power%   "
                  bFillBkgd = FALSE
                  nFore = 255
                  nBack = 0
                  nSelectorPlane = 9
                  fontName = "Arial"
                  fontStyle = "Bold"
                  fontSize = 11
                  byRedForeColor = 255
                  byGreenForeColor = 255
                  byBlueForeColor = 255
                  byRedBackColor = 0
                  byGreenBackColor = 0
                  byBlueBackColor = 0
                As Displayed
                  imSource = m 1 7 9 0 1 123 0 8 Untitled
                  imDest = "Target Regions Overlay"
                  nCopyRegion = 2
                Close
                  im = m 1 7 9 0 1 123 0 16 IMA Objects Mask
                  bSaveIt = FALSE




