Journal
Description: Startup Journal for NLS Experiments with Script v1.0.
Version VersionNumber=2.4

Comment: Variables to assign: pulsetime; pulsetime2; pulsetime3; title of log journal; hi_value; md_value; lo_value
Delay
  dpDelayTime = 12
  nDelayUnits = 4
Assign Variable
  pulsetime = 800
Assign Variable
  pulsetime2 = 200
Assign Variable
  pulsetime3 = 50
hi_value = 1.244
md_value = 1.079
lo_value = 0.964

Comment: Other variables (DO NOT CHANGE)
Assign Variable
  size_dilate = 0
Assign Variable
  Component.405_Laser_Power.Position = 100
Total_Regions = 0
Select Focus Device
  stNewDev = "Leica Z Motor"
  stGUID = ""
Start Continuous Focusing
  m_dpRange = 0
