Journal
Description: 3 Level Segmentation- 

  Variables and logs that must be pre-opened at the beginning of the experiment: 
  blank object log (data logging should be paused at beginning of experiment - note that image data will be saved to the datalog; first set of measurements are cytoplasm; second set are nucleus) 
  IMA for bin 1 pulsetime
  IMA for the bin pulsetime2


  Pulse1 is Correlated to Blue (High) - 800ms recommended (intensely nuclear) - NEED TO DEFINE, variable = hi_value 
  Pulse2 Length is Correlated to Green (Middle) - 200ms recommended (medium nuclear) - NEED TO DEFINE, variable = md_value 
  Pulse3 is not used for this experiment 

  In this experiment, only GFP is imaged (and cropped)
Version VersionNumber=2.4
Well = Screen.Status.WellName + "_" + + "Site" + str(Screen.Status.SiteNum)
Power = str(Component.405_Laser_Power.Position)  +"% " +"Laser Power"

IfThenElse Expression=Screen.Status.WaveName="Camera GFP"
  CodeBlock Condition=true
    Comment: Crop GFP, maintaining original image name
    name = "Camera GFP"+"_"+"Crop"
    Create Region
      nRgnType = 1
      nX1 = 0 Override=Variable OverrideVariable=0
      nY1 = 1 Override=Variable OverrideVariable=1
      nX2 = 1740 Override=Variable OverrideVariable=Image.Width
      nY2 = 1534 Override=Variable OverrideVariable=Image.Height-2
    Image/Plane
      dupPlaneImage = "Camera GFP"
      copyIm = "Image/Plane"
    Image.Name = name
    Clear All Regions
      clearImage = m 1 5 9 0 1 -1 -1 8 Untitled
    Comment: Segment cells
    Run Journal
      stExecuteJournal = "C:\MM\app\mmproc\journals\Journals Fowler\Fowler Lab Segmentation\2018\10-03-18_taxol-exp-attempt6\nuclear-seg_detail-oriented.jnl"
    Comment: Create bin1 binary (high shape factor)
    Integrated Morphometry - Load State
      stLoadFileName = "C:\MM\app\mmproc\journals\Journals Fowler\Fowler Lab Segmentation\2018\09-12-18_taxol-exp-attempt3\high_shapefactor_bin.IMA"
    Integrated Morphometry - Measure
      imSource = "Camera GFP_Crop"
      nColor = 0
      imMask = "final_binary"
      bMeasureUsingMask = TRUE
    Disabled Integrated Morphometry - Log Data
      imSource = m 1 3 9 0 1 -1 -1 8 Untitled
      nDisplay = 1
      nMode = 1
      nParm = 1
      nYParm = 2
    Integrated Morphometry - Create Objects Mask
    Image.Name = "Reg1_storage"
    Create Regions Around Objects
      imSource = m 1 3 9 0 1 -1 -1 8 Untitled
    Comment: Create bin2 binary (low shape factor)
    Integrated Morphometry - Load State
      stLoadFileName = "C:\MM\app\mmproc\journals\Journals Fowler\Fowler Lab Segmentation\2018\09-12-18_taxol-exp-attempt3\low_shapefactor_bin.IMA"
    Integrated Morphometry - Measure
      imSource = "Camera GFP_Crop"
      nColor = 0
      imMask = "final_binary"
      bMeasureUsingMask = TRUE
    Disabled Integrated Morphometry - Log Data
      imSource = m 1 3 9 0 1 -1 -1 8 Untitled
      nDisplay = 1
      nMode = 1
      nParm = 1
      nYParm = 2
    Integrated Morphometry - Create Objects Mask
    Image.Name = "Reg2_storage"
    Create Regions Around Objects
      imSource = m 1 3 9 0 1 -1 -1 8 Untitled
    Close
      im = "final_binary"
      bSaveIt = FALSE
    Comment: Save regions in Reg1_storage, then close it
    Select Image
      im = "Reg1_storage"
      prompt = ""
    IfThenElse Expression=Image.NumRegions>=1
      CodeBlock Condition=true
        Reg1 = 1
        ForNextLoop LoopVariable=Image.ActiveRegion, StartValue=1, EndValue=Image.NumRegions, StepValue=1
          Region.ColorBlue = 255
          Region.ColorGreen = 0
          Region.ColorRed = 0
        Save Regions
          stFilename = "C:\MM\regions\Batch 1 ROI Targeting.rgn"
          saveImage = "Reg1_storage"
      CodeBlock Condition=false
        Comment: No Regions Present at the Low Threshold
        Reg1 = 0
    Close
      im = "Reg1_storage"
      bSaveIt = FALSE
    Comment: Save regions in Reg2_storage, then close it
    Select Image
      im = "Reg2_storage"
      prompt = ""
    IfThenElse Expression=Image.NumRegions>=1
      CodeBlock Condition=true
        Reg2 = 1
        ForNextLoop LoopVariable=Image.ActiveRegion, StartValue=1, EndValue=Image.NumRegions, StepValue=1
          Region.ColorBlue = 0
          Region.ColorGreen = 0
          Region.ColorRed = 255
        Save Regions
          stFilename = "C:\MM\regions\Batch 2 ROI Targeting.rgn"
          saveImage = "Reg2_storage"
      CodeBlock Condition=false
        Comment: No Regions Present at the Low Threshold
        Reg2 = 0
    Close
      im = "Reg2_storage"
      bSaveIt = FALSE
    Comment: No 3rd bin so make Reg3 = 0
    Reg3 = 0
    Comment: END Segmentation of Image
    Close
      im = "Camera GFP_crop"
      bSaveIt = FALSE
    Comment: *****************TARGETING FOR MOSAIC -Batch 1 ROI's......NO NEED TO EDIT SCRIPT/CHANGE BELOW THIS LINE**************************************
    Select Image
      im = "Camera GFP"
      prompt = ""
    IfThenElse Expression=Reg1=1
      CodeBlock Condition=true
        Comment: Regions are Saved and loaded to Mosaic for Targeting
        Load Regions
          stFilename = "C:\MM\regions\Batch 1 ROI Targeting.rgn"
          openImage = "Camera GFP"
        current_illumination = Device.Illumination.Setting
        Select Illumination
          bUseLegacyDelay = FALSE
          cMillisecDelay = 100
          stSetting = "Camera GFP" Override=None OverrideVariable=Setting Name
        Targeted Illumination
          IlluminationSetting = "Camera GFP" Override=None OverrideVariable=Illumination setting
          ImageIlluminationSetting = "" Override=None OverrideVariable=Imaging Illumination setting
          CoordinateSetting = "20X LWD" Override=Variable OverrideVariable=Device.Magnification.Setting
          PositionSetting = 3 Override=None OverrideVariable=Position: setting (1=image coords, 2=center of active region, 3=all region centers)
          PositionImageCoordinatesX = 100 Override=None OverrideVariable=Position: image coordinate X
          PositionImageCoordinatesY = 100 Override=None OverrideVariable=Position: image coordinate Y
          NumberOfLaserFires = 1 Override=None OverrideVariable=Number of laser pulses
          NeutralDensitySetting = 5 Override=None OverrideVariable=Attenuator plate: % transmission
          dExpDurMS = 5000 Override=Variable OverrideVariable=pulsetime
          PointSize = 1 Override=None OverrideVariable=Point size
        Delay
          dpDelayTime = 100 Override=Variable OverrideVariable=pulsetime
          nDelayUnits = 1
        Select Illumination
          bUseLegacyDelay = FALSE
          cMillisecDelay = 100
          stSetting = "Camera GFP" Override=Variable OverrideVariable=current_Illumination
        Clear All Regions
          clearImage = "Camera GFP"
      CodeBlock Condition=false
        Reg1 = 0
        Comment: Dont' Utilize the Mosaic on this Field of VIew
    Comment: *****************TARGETING FOR MOSAIC -Batch 2 ROI's......NO NEED TO EDIT SCRIPT/CHANGE BELOW THIS LINE**************************************
    Select Image
      im = "Camera GFP"
      prompt = ""
    IfThenElse Expression=Reg2=1
      CodeBlock Condition=true
        Comment: Regions are Saved and loaded to Mosaic for Targeting
        Load Regions
          stFilename = "C:\MM\regions\Batch 2 ROI Targeting.rgn"
          openImage = "Camera GFP"
        current_illumination = Device.Illumination.Setting
        Select Illumination
          bUseLegacyDelay = FALSE
          cMillisecDelay = 100
          stSetting = "Camera GFP" Override=None OverrideVariable=Setting Name
        Targeted Illumination
          IlluminationSetting = "Camera GFP" Override=None OverrideVariable=Illumination setting
          ImageIlluminationSetting = "" Override=None OverrideVariable=Imaging Illumination setting
          CoordinateSetting = "20X LWD" Override=Variable OverrideVariable=Device.Magnification.Setting
          PositionSetting = 3 Override=None OverrideVariable=Position: setting (1=image coords, 2=center of active region, 3=all region centers)
          PositionImageCoordinatesX = 100 Override=None OverrideVariable=Position: image coordinate X
          PositionImageCoordinatesY = 100 Override=None OverrideVariable=Position: image coordinate Y
          NumberOfLaserFires = 1 Override=None OverrideVariable=Number of laser pulses
          NeutralDensitySetting = 5 Override=None OverrideVariable=Attenuator plate: % transmission
          dExpDurMS = 5000 Override=Variable OverrideVariable=pulsetime2
          PointSize = 1 Override=None OverrideVariable=Point size
        Delay
          dpDelayTime = 100 Override=Variable OverrideVariable=pulsetime2
          nDelayUnits = 1
        Select Illumination
          bUseLegacyDelay = FALSE
          cMillisecDelay = 100
          stSetting = "Camera GFP" Override=Variable OverrideVariable=current_Illumination
        Clear All Regions
          clearImage = "Camera GFP"
      CodeBlock Condition=false
        Comment: Dont' Utilize the Mosaic on this Field of VIew
    Comment: *****************TARGETING FOR MOSAIC -Batch 3 ROI's......NO NEED TO EDIT SCRIPT/CHANGE BELOW THIS LINE**************************************
    Select Image
      im = "Camera GFP"
      prompt = ""
    IfThenElse Expression=Reg3=1
      CodeBlock Condition=true
        Comment: Regions are Saved and loaded to Mosaic for Targeting
        Load Regions
          stFilename = "C:\MM\regions\Batch 3 ROI Targeting.rgn"
          openImage = "Camera GFP"
        current_illumination = Device.Illumination.Setting
        Select Illumination
          bUseLegacyDelay = FALSE
          cMillisecDelay = 100
          stSetting = "Camera GFP" Override=None OverrideVariable=Setting Name
        Targeted Illumination
          IlluminationSetting = "Camera GFP" Override=None OverrideVariable=Illumination setting
          ImageIlluminationSetting = "" Override=None OverrideVariable=Imaging Illumination setting
          CoordinateSetting = "20X LWD" Override=Variable OverrideVariable=Device.Magnification.Setting
          PositionSetting = 3 Override=None OverrideVariable=Position: setting (1=image coords, 2=center of active region, 3=all region centers)
          PositionImageCoordinatesX = 100 Override=None OverrideVariable=Position: image coordinate X
          PositionImageCoordinatesY = 100 Override=None OverrideVariable=Position: image coordinate Y
          NumberOfLaserFires = 1 Override=None OverrideVariable=Number of laser pulses
          NeutralDensitySetting = 5 Override=None OverrideVariable=Attenuator plate: % transmission
          dExpDurMS = 5000 Override=Variable OverrideVariable=pulsetime3
          PointSize = 1 Override=None OverrideVariable=Point size
        Delay
          dpDelayTime = 100 Override=Variable OverrideVariable=pulsetime3
          nDelayUnits = 1
        Select Illumination
          bUseLegacyDelay = FALSE
          cMillisecDelay = 100
          stSetting = "Camera GFP" Override=Variable OverrideVariable=current_Illumination
        Clear All Regions
          clearImage = "Camera GFP"
      CodeBlock Condition=false
        Reg1 = 0
        Comment: Dont' Utilize the Mosaic on this Field of VIew
    Select Image
      im = "Camera GFP"
      prompt = ""
  CodeBlock Condition=false


Comment: Create Overlay Images for Final Display Purposes: Conditions: (1,1,1) (1,1,0) (1,0,1) (1,0,0) (0,1,1) (0,1,0) (0,0,1) (0,0,0)
Disabled IfThenElse Expression=Screen.Status.WaveName="Camera GFP"
  CodeBlock Condition=true
    IfThenElse Expression=Reg1=1
      CodeBlock Condition=true
        IfThenElse Expression=Reg2=1
          CodeBlock Condition=true
            IfThenElse Expression=Reg3=1
              CodeBlock Condition=true
                Comment: Lo, Mid and High Regions Found  Reg1=1 and Reg 2=1 and Reg3=1
                Comment: Reg1=1 and Reg2=1 and  Reg3=1
                Comment: #1  (1,1,1)
                Color Combine
                  imRed = m 1 2 9 2 1 -1 -1 8 Untitled
                  imGreen = "Camera GFP"
                  imBlue = m 1 2 9 2 1 -1 -1 8 Untitled
                  imStack = m 1 2 9 2 1 -1 -1 8 Untitled
                  imDest = "Color Combine"
                  imSource8 = m 1 2 9 2 1 -1 -1 8 Untitled
                  bColorEncode = FALSE
                  nSource = 1
                  nResultDepth = 2
                  bHueRendering = FALSE
                Text
                  im = m 1 7 9 0 1 45 0 14 Target Regions
                  xPos = 10
                  yPos = 10
                  text = "%Well%     Pulse Time Hi: %pulsetime%     Pulse Time Med: %pulsetime2%     Pulse Time Lo: %pulsetime3% Power: %Power%   "
                  bFillBkgd = FALSE
                  nFore = 255
                  nBack = 0
                  nSelectorPlane = 9
                  fontName = "Arial"
                  fontStyle = "Bold"
                  fontSize = 18
                  byRedForeColor = 255
                  byGreenForeColor = 255
                  byBlueForeColor = 255
                  byRedBackColor = 0
                  byGreenBackColor = 0
                  byBlueBackColor = 0
                Load Regions
                  stFilename = "C:\MM\regions\Batch 1 ROI Targeting.rgn"
                  openImage = m 1 7 9 0 1 45 0 8 Untitled
                Load Regions
                  stFilename = "C:\MM\regions\Batch 2 ROI Targeting.rgn"
                  openImage = m 1 7 9 0 1 45 0 8 Untitled
                Load Regions
                  stFilename = "C:\MM\regions\Batch 3 ROI Targeting.rgn"
                  openImage = m 1 7 9 0 1 45 0 8 Untitled
                As Displayed
                  imSource = m 1 7 9 0 1 45 0 8 Untitled
                  imDest = "Target Regions Overlay"
                  nCopyRegion = 2
                Close
                  im = m 1 7 9 0 1 45 0 16 IMA Objects Mask
                  bSaveIt = FALSE
              CodeBlock Condition=false
                Comment: #2(1,1,0)
                Color Combine
                  imRed = m 1 2 9 2 1 -1 -1 8 Untitled
                  imGreen = "Camera GFP"
                  imBlue = m 1 2 9 2 1 -1 -1 8 Untitled
                  imStack = m 1 2 9 2 1 -1 -1 8 Untitled
                  imDest = "Color Combine"
                  imSource8 = m 1 2 9 2 1 -1 -1 8 Untitled
                  bColorEncode = FALSE
                  nSource = 1
                  nResultDepth = 2
                  bHueRendering = FALSE
                Text
                  im = m 1 7 9 0 1 52 0 14 Target Regions
                  xPos = 10
                  yPos = 10
                  text = "%Well%     Pulse Time Hi: %pulsetime%     Pulse Time Med: %pulsetime2%     Pulse Time Lo: %pulsetime3% Power: %Power%   "
                  bFillBkgd = FALSE
                  nFore = 255
                  nBack = 0
                  nSelectorPlane = 9
                  fontName = "Arial"
                  fontStyle = "Bold"
                  fontSize = 18
                  byRedForeColor = 255
                  byGreenForeColor = 255
                  byBlueForeColor = 255
                  byRedBackColor = 0
                  byGreenBackColor = 0
                  byBlueBackColor = 0
                Load Regions
                  stFilename = "C:\MM\regions\Batch 1 ROI Targeting.rgn"
                  openImage = m 1 7 9 0 1 52 0 8 Untitled
                Load Regions
                  stFilename = "C:\MM\regions\Batch 2 ROI Targeting.rgn"
                  openImage = m 1 7 9 0 1 52 0 8 Untitled
                As Displayed
                  imSource = m 1 7 9 0 1 52 0 8 Untitled
                  imDest = "Target Regions Overlay"
                  nCopyRegion = 2
                Close
                  im = m 1 7 9 0 1 52 0 16 IMA Objects Mask
                  bSaveIt = FALSE
          CodeBlock Condition=false
            Comment: Reg1=1 and Reg 2=0 Reg3=1
            IfThenElse Expression=Reg3=1
              CodeBlock Condition=true
                Comment: #3 (1,0,1)
                Color Combine
                  imRed = m 1 2 9 2 1 -1 -1 8 Untitled
                  imGreen = "Camera GFP"
                  imBlue = m 1 2 9 2 1 -1 -1 8 Untitled
                  imStack = m 1 2 9 2 1 -1 -1 8 Untitled
                  imDest = "Color Combine"
                  imSource8 = m 1 2 9 2 1 -1 -1 8 Untitled
                  bColorEncode = FALSE
                  nSource = 1
                  nResultDepth = 2
                  bHueRendering = FALSE
                Text
                  im = m 1 7 9 0 1 58 0 14 Target Regions
                  xPos = 10
                  yPos = 10
                  text = "%Well%     Pulse Time Hi: %pulsetime%     Pulse Time Med: %pulsetime2%     Pulse Time Lo: %pulsetime3% Power: %Power%   "
                  bFillBkgd = FALSE
                  nFore = 255
                  nBack = 0
                  nSelectorPlane = 9
                  fontName = "Arial"
                  fontStyle = "Bold"
                  fontSize = 18
                  byRedForeColor = 255
                  byGreenForeColor = 255
                  byBlueForeColor = 255
                  byRedBackColor = 0
                  byGreenBackColor = 0
                  byBlueBackColor = 0
                Load Regions
                  stFilename = "C:\MM\regions\Batch 1 ROI Targeting.rgn"
                  openImage = m 1 7 9 0 1 58 0 8 Untitled
                Load Regions
                  stFilename = "C:\MM\regions\Batch 3 ROI Targeting.rgn"
                  openImage = m 1 7 9 0 1 58 0 8 Untitled
                As Displayed
                  imSource = m 1 7 9 0 1 58 0 8 Untitled
                  imDest = "Target Regions Overlay"
                  nCopyRegion = 2
                Close
                  im = m 1 7 9 0 1 58 0 16 IMA Objects Mask
                  bSaveIt = FALSE
              CodeBlock Condition=false
                Comment: #4 (1,0,0)
                Color Combine
                  imRed = m 1 2 9 2 1 -1 -1 8 Untitled
                  imGreen = "Camera GFP"
                  imBlue = m 1 2 9 2 1 -1 -1 8 Untitled
                  imStack = m 1 2 9 2 1 -1 -1 8 Untitled
                  imDest = "Color Combine"
                  imSource8 = m 1 2 9 2 1 -1 -1 8 Untitled
                  bColorEncode = FALSE
                  nSource = 1
                  nResultDepth = 2
                  bHueRendering = FALSE
                Text
                  im = m 1 7 9 0 1 64 0 14 Target Regions
                  xPos = 10
                  yPos = 10
                  text = "%Well%     Pulse Time Hi: %pulsetime%     Pulse Time Med: %pulsetime2%     Pulse Time Lo: %pulsetime3% Power: %Power%   "
                  bFillBkgd = FALSE
                  nFore = 255
                  nBack = 0
                  nSelectorPlane = 9
                  fontName = "Arial"
                  fontStyle = "Bold"
                  fontSize = 18
                  byRedForeColor = 255
                  byGreenForeColor = 255
                  byBlueForeColor = 255
                  byRedBackColor = 0
                  byGreenBackColor = 0
                  byBlueBackColor = 0
                Load Regions
                  stFilename = "C:\MM\regions\Batch 1 ROI Targeting.rgn"
                  openImage = m 1 7 9 0 1 64 0 8 Untitled
                As Displayed
                  imSource = m 1 7 9 0 1 64 0 8 Untitled
                  imDest = "Target Regions Overlay"
                  nCopyRegion = 2
                Close
                  im = m 1 7 9 0 1 64 0 16 IMA Objects Mask
                  bSaveIt = FALSE
      CodeBlock Condition=false
        Comment: Reg1=0 and Reg2=1
        IfThenElse Expression=Reg2=1
          CodeBlock Condition=true
            Comment: Reg1=0 and Reg2=1 and Reg3=1
            IfThenElse Expression=Reg3=1
              CodeBlock Condition=true
                Comment: #5 (0,1,1)
                Color Combine
                  imRed = m 1 2 9 2 1 -1 -1 8 Untitled
                  imGreen = "Camera GFP"
                  imBlue = m 1 2 9 2 1 -1 -1 8 Untitled
                  imStack = m 1 2 9 2 1 -1 -1 8 Untitled
                  imDest = "Color Combine"
                  imSource8 = m 1 2 9 2 1 -1 -1 8 Untitled
                  bColorEncode = FALSE
                  nSource = 1
                  nResultDepth = 2
                  bHueRendering = FALSE
                Load Regions
                  stFilename = "C:\MM\regions\Batch 2 ROI Targeting.rgn"
                  openImage = m 1 7 9 0 1 69 0 8 Untitled
                Load Regions
                  stFilename = "C:\MM\regions\Batch 3 ROI Targeting.rgn"
                  openImage = m 1 7 9 0 1 69 0 8 Untitled
                Text
                  im = m 1 7 9 0 1 69 0 14 Target Regions
                  xPos = 10
                  yPos = 10
                  text = "%Well%     Pulse Time Hi: %pulsetime%     Pulse Time Med: %pulsetime2%     Pulse Time Lo: %pulsetime3% Power: %Power%   "
                  bFillBkgd = FALSE
                  nFore = 255
                  nBack = 0
                  nSelectorPlane = 9
                  fontName = "Arial"
                  fontStyle = "Bold"
                  fontSize = 18
                  byRedForeColor = 255
                  byGreenForeColor = 255
                  byBlueForeColor = 255
                  byRedBackColor = 0
                  byGreenBackColor = 0
                  byBlueBackColor = 0
                As Displayed
                  imSource = m 1 7 9 0 1 69 0 8 Untitled
                  imDest = "Target Regions Overlay"
                  nCopyRegion = 2
                Close
                  im = m 1 7 9 0 1 69 0 16 IMA Objects Mask
                  bSaveIt = FALSE
              CodeBlock Condition=false
                Comment: #6 (0,1,0)
                Color Combine
                  imRed = m 1 2 9 2 1 -1 -1 8 Untitled
                  imGreen = "Camera GFP"
                  imBlue = m 1 2 9 2 1 -1 -1 8 Untitled
                  imStack = m 1 2 9 2 1 -1 -1 8 Untitled
                  imDest = "Color Combine"
                  imSource8 = m 1 2 9 2 1 -1 -1 8 Untitled
                  bColorEncode = FALSE
                  nSource = 1
                  nResultDepth = 2
                  bHueRendering = FALSE
                Load Regions
                  stFilename = "C:\MM\regions\Batch 2 ROI Targeting.rgn"
                  openImage = m 1 7 9 0 1 75 0 8 Untitled
                Text
                  im = m 1 7 9 0 1 75 0 14 Target Regions
                  xPos = 10
                  yPos = 10
                  text = "%Well%     Pulse Time Hi: %pulsetime%     Pulse Time Med: %pulsetime2%     Pulse Time Lo: %pulsetime3% Power: %Power%   "
                  bFillBkgd = FALSE
                  nFore = 255
                  nBack = 0
                  nSelectorPlane = 9
                  fontName = "Arial"
                  fontStyle = "Bold"
                  fontSize = 18
                  byRedForeColor = 255
                  byGreenForeColor = 255
                  byBlueForeColor = 255
                  byRedBackColor = 0
                  byGreenBackColor = 0
                  byBlueBackColor = 0
                As Displayed
                  imSource = m 1 7 9 0 1 75 0 8 Untitled
                  imDest = "Target Regions Overlay"
                  nCopyRegion = 2
                Close
                  im = m 1 7 9 0 1 75 0 16 IMA Objects Mask
                  bSaveIt = FALSE
          CodeBlock Condition=false
            IfThenElse Expression=Reg3=1
              CodeBlock Condition=true
                Comment: #7 (0,0,1)
                Color Combine
                  imRed = m 1 2 9 2 1 -1 -1 8 Untitled
                  imGreen = "Camera GFP"
                  imBlue = m 1 2 9 2 1 -1 -1 8 Untitled
                  imStack = m 1 2 9 2 1 -1 -1 8 Untitled
                  imDest = "Color Combine"
                  imSource8 = m 1 2 9 2 1 -1 -1 8 Untitled
                  bColorEncode = FALSE
                  nSource = 1
                  nResultDepth = 2
                  bHueRendering = FALSE
                Load Regions
                  stFilename = "C:\MM\regions\Batch 3 ROI Targeting.rgn"
                  openImage = m 1 7 9 0 1 80 0 8 Untitled
                Text
                  im = m 1 7 9 0 1 80 0 14 Target Regions
                  xPos = 10
                  yPos = 10
                  text = "%Well%     Pulse Time Hi: %pulsetime%     Pulse Time Med: %pulsetime2%     Pulse Time Lo: %pulsetime3% Power: %Power%   "
                  bFillBkgd = FALSE
                  nFore = 255
                  nBack = 0
                  nSelectorPlane = 9
                  fontName = "Arial"
                  fontStyle = "Bold"
                  fontSize = 18
                  byRedForeColor = 255
                  byGreenForeColor = 255
                  byBlueForeColor = 255
                  byRedBackColor = 0
                  byGreenBackColor = 0
                  byBlueBackColor = 0
                As Displayed
                  imSource = m 1 7 9 0 1 80 0 8 Untitled
                  imDest = "Target Regions Overlay"
                  nCopyRegion = 2
                Close
                  im = m 1 7 9 0 1 80 0 16 IMA Objects Mask
                  bSaveIt = FALSE
              CodeBlock Condition=false
                Comment: #8 (0,0,0)
                Color Combine
                  imRed = m 1 2 9 2 1 -1 -1 8 Untitled
                  imGreen = "Camera GFP"
                  imBlue = m 1 2 9 2 1 -1 -1 8 Untitled
                  imStack = m 1 2 9 2 1 -1 -1 8 Untitled
                  imDest = "Color Combine"
                  imSource8 = m 1 2 9 2 1 -1 -1 8 Untitled
                  bColorEncode = FALSE
                  nSource = 1
                  nResultDepth = 2
                  bHueRendering = FALSE
                Text
                  im = m 1 7 9 0 1 85 0 14 Target Regions
                  xPos = 10
                  yPos = 10
                  text = "%Well%     Pulse Time Hi: %pulsetime%     Pulse Time Med: %pulsetime2%     Pulse Time Lo: %pulsetime3% Power: %Power%   "
                  bFillBkgd = FALSE
                  nFore = 255
                  nBack = 0
                  nSelectorPlane = 9
                  fontName = "Arial"
                  fontStyle = "Bold"
                  fontSize = 18
                  byRedForeColor = 255
                  byGreenForeColor = 255
                  byBlueForeColor = 255
                  byRedBackColor = 0
                  byGreenBackColor = 0
                  byBlueBackColor = 0
                As Displayed
                  imSource = m 1 7 9 0 1 85 0 8 Untitled
                  imDest = "Target Regions Overlay"
                  nCopyRegion = 2
                Close
                  im = m 1 7 9 0 1 85 0 16 IMA Objects Mask
                  bSaveIt = FALSE




