Journal
Description: Segmentation for Nuclear Shape Journal. Returns "final_binary", which consists of
Version VersionNumber=2.4
Pause Object Logging
Morphological Top Hat
  imSrcIm = m 1 5 9 0 1 -1 -1 8 Untitled
  imDestIm = "Top Hat"
  nShapeSize = 5000
  nShape = 4
  bUseRecon = FALSE
Low Pass
  imSource = m 1 3 9 0 1 -1 -1 8 Untitled
  imDest = "Low Pass"
  nLowPassHorizSize = 3
  nLowPassVertSize = 3
Close
  im = m 1 7 9 0 1 2 0 8 Untitled
  bSaveIt = FALSE
Background and Shading Correction
  nOffset = 1
  dScalingFactor = 0.01
  nOperation = 4
  imDest = "Flatten Background"
  imFore = m 1 3 9 0 1 -1 -1 8 Untitled
  imBack = m 1 2 9 2 1 -1 -1 8 Untitled
  imShade = m 1 2 9 2 1 -1 -1 8 Untitled
  nResultDepth = 1
  bScaleUsingMaxPixel = TRUE
  nFlattenBackHorizSize = 20
  mModalityFlattenBack = 1
  nRegion = 1
  nValue = 1
  iSecondSource = 2
Close
  im = m 1 7 9 0 1 3 0 8 Untitled
  bSaveIt = FALSE
Detect Edges
  imSource = m 1 3 9 0 1 -1 -1 8 Untitled
  imDest = "Sobel"
  nResultOffset = 0
  mKernelType = 5
Close
  im = m 1 7 9 0 1 5 0 8 Untitled
  bSaveIt = FALSE
Sharpen
  imSource = m 1 3 9 0 1 -1 -1 8 Untitled
  imDest = "Sharpen Medium"
  mKernelTypeSharpen = 2
Close
  im = m 1 7 9 0 1 7 0 8 Untitled
  bSaveIt = FALSE
Auto Threshold for Light Objects
  imAuto = m 1 3 9 0 1 -1 -1 8 Untitled
  nAutoThreshOption = 1
Binary Operations
  imSource = m 1 3 9 0 1 -1 -1 8 Untitled
  imDest = "Binary"
  bUseThresholdVars = FALSE
  nThresholdState = 1
  uThresholdMin = 767
  uThresholdMax = 65535
Close
  im = m 1 7 9 0 1 9 0 8 Untitled
  bSaveIt = FALSE
Resume Object Logging
Morphological Holes
  imSrcIm = m 1 3 9 0 1 -1 -1 8 Untitled
  imDestIm = "Holes"
  bDetectNotSuppress = FALSE
  bLightHoles = FALSE
Close
  im = m 1 7 9 0 1 12 0 8 Untitled
  bSaveIt = FALSE
Dilate Image
  imSource = m 1 3 9 0 1 -1 -1 8 Untitled
  imDest = "Dilate_tunnels"
  nThresh = 6
  cRepeat = 1
  bDilateWithoutClose = FALSE
Close
  im = m 1 7 9 0 1 15 0 8 Untitled
  bSaveIt = FALSE
Morphological Holes
  imSrcIm = m 1 3 9 0 1 -1 -1 8 Untitled
  imDestIm = "Holes2"
  bDetectNotSuppress = FALSE
  bLightHoles = FALSE
Close
  im = m 1 7 9 0 1 17 0 8 Untitled
  bSaveIt = FALSE
Erode Image
  imSource = m 1 3 9 0 1 -1 -1 5 Erode
  imDest = "Erode"
  nThresh = 2
  cRepeat = 2
  bKeepLastPixel = FALSE
Close
  im = m 1 7 9 0 1 19 0 8 Untitled
  bSaveIt = FALSE
Remove Single Pixels
  imSource = m 1 3 9 0 1 -1 -1 12 final_binary
  imDest = "final_binary"
Close
  im = m 1 7 9 0 1 21 0 8 Untitled
  bSaveIt = FALSE
